WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

GroupWorkflow "InitialGray Screen" => #2
    SubscribeSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=5, ExtentY=5, LocationX=80, LocationY=-30, Layer=1, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #3
#2, #3 -> TakeUntil => #4
ExternalizedMapping(ActiveQuads, GridSize, Duration, Value(DisplayName=BinFileName, Category=Filename))
-> GroupWorkflow "SparseNoise Group" => #6
    ExternalizedMapping(Duration, ActiveQuads, GridSize)
    -> IncludeWorkflow(Path=BonVision:Collections.SparseNoise.bonsai, Duration=PT1.1S, ActiveQuads=3, GridSize(Width=8, Height=8)) => #1
    SubscribeSubject FilenamePrefix => #2
    ExternalizedMapping(Value)
    -> StringProperty(Value=_Log.bin) => #4
    #2, #4 -> Zip
    -> Format(Format={0}{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #7
    #1, #7 -> Bonsai.Dsp.MatrixWriter(Path=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012_SparseNoise_20250304__Log.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    -> Sink TriggerSyncQuad
        WorkflowInput Source1
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #2
        -> Add(Operand=IntProperty(Value=1))
        -> Mod(Operand=IntProperty(Value=2))
        -> MulticastSubject QuadState
        -> WorkflowOutput
        #2 -> MulticastSubject RepCounter
    -> Bonsai.Shaders.UpdateTexture(TextureName=DynamicVideo, TextureTarget=Texture2D, InternalFormat=Rgba)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
    #1 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
    #14, #1 -> Zip
    -> Disable IncludeWorkflow TrialEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
#4, #6 -> Concat => #7
ExternalizedMapping("Stim Duration (s)")
-> GroupWorkflow Timer
    SubscribeSubject RepCounter => #0
    SubscribeSubject DurationSingleImage => #1
    #0, #1 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform => #3
      Expression: item1*item2
    ExternalizedMapping(Value(DisplayName="Stim Duration (s)"))
    -> FloatProperty(Value=1200)
    -> PropertyMapping(Value) => #6
    #3, #6 -> Equal(Operand=FloatProperty(Value=1200))
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> MulticastSubject TimerExpired => #11
#7, #11 -> TakeUntil => #12
GroupWorkflow FinalGrayScreen => #13
    SubscribeSubject DrawStimuli
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=5
      ExtentY=5
      LocationX=-80
      LocationY=-30
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    -> FloatProperty(Value=0)
    -> WorkflowOutput

    Disable Bonsai.Shaders.UpdateFrame
#12, #13 -> Concat
-> WorkflowOutput
ExternalizedMapping(ExtentX, ExtentY, LocationX, LocationY) => #16
SubscribeSubject DrawStimuli => #17
#16, #17 -> IncludeWorkflow => #18
  Path=BonVision:Primitives.DrawImage.bonsai
  TextureName=DynamicVideo
  ExtentX=110
  ExtentY=90
  LocationX=-30
  LocationY=0
  Layer=0
  Angle=0
  ScaleX=1
  ScaleY=1
  ShiftX=0
  ShiftY=0
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #19
#18, #19 -> SubscribeWhen => #20
#20, #11 -> TakeUntil

Disable BehaviorSubject StartDisplay

Bonsai.Shaders.RenderFrame => #23
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #25
#23, #25 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
-> PublishSubject DrawStimuli
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #28
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#28 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#28 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0000016696521, Z=0), Translation(X=12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.665, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
#23 -> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount
#23 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

ExternalizedMapping(TopBorder(Category=OrthBorder), BottomBorder(Category=OrthBorder), LeftBorder(Category=OrthBorder), RightBorder(Category=OrthBorder))
-> GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow VarInIt
    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

SubscribeSubject DrawStimuli => #48
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #50
#48, #50 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=15
  ExtentY=10
  LocationX=80
  LocationY=-30
  Layer=1
  Angle=0
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuad

Disable GroupWorkflow Arduino_old
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry
    -> BehaviorSubject PDandAsync
    -> MemberSelector(Selector=Item1)

Disable GroupWorkflow Logging_old
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter(FileName=M24019_SparseNoise_Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_SparseNoise_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #3, #1 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter(FileName=M24019_SparseNoise_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #0, #1, #2, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject VideoLEDAsync => #3
        #0, #2, #3 -> Zip => #4
        SubscribeSubject ArduinoTime => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

Disable GroupWorkflow Video => #56
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=1952, Y=60, Width=64, Height=54))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_video.avi, Selector=it)
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=M24019_SparseNoise_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #18
    #17, #18 -> SubscribeWhen => #19
    #19, #16 -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Disable Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #57
#56, #57 -> Disable SubscribeWhen

GroupWorkflow Arduino
    ExternalizedMapping(PortName)
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM3
      BaudRate=1000000
      Encoding=utf-8
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoSerial, NewLine=\n)
    -> Disable SampleInterval(Interval=PT0.05S)
    -> Parse(Pattern=%i\t%i\t%i\t%i\t%f\t%i\t%i\t%i)
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> Disable MulticastSubject WheelInput
    -> BehaviorSubject WheelInput
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> Disable MulticastSubject LeftLick
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> Disable MulticastSubject RightLick
    -> BehaviorSubject RightLick
    #5 -> MemberSelector(Selector=Item4)
    -> Disable MulticastSubject LastSyncPulseTime
    -> BehaviorSubject LastSyncPulseTime
    #5 -> MemberSelector(Selector=Item5)
    -> Disable MulticastSubject Photodiode
    -> BehaviorSubject Photodiode
    #5 -> MemberSelector(Selector=Item6)
    -> DistinctUntilChanged
    -> Disable MulticastSubject TwoPFrameTime
    -> BehaviorSubject TwoPFrameTime
    #5 -> MemberSelector(Selector=Item7)
    -> DistinctUntilChanged
    -> Disable MulticastSubject WideFieldFrameTime
    -> BehaviorSubject WideFieldFrameTime
    #5 -> MemberSelector(Selector=Rest.Item1)
    -> Disable MulticastSubject ArduinoTime
    -> BehaviorSubject ArduinoTime

    Disable Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoPD
      PortName=COM7
      BaudRate=250000
      Encoding=us-ascii
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoPD, NewLine=\n)
    -> Disable Parse(Pattern="%i,%i")
    -> Disable Retry
    -> Disable BehaviorSubject PDandAsync
    -> Disable MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012_SparseNoise_20250304__Wheel.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow TwoPLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TwoPLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012_SparseNoise_20250304__2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #3 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012_SparseNoise_20250304__Photodiode.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    Disable GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_TrialParams) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject TrialParams => #9
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #11
        #9, #11 -> Zip => #12
        SubscribeSubject ArduinoTime => #13
        #12, #13 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: new(Item1.Item1.TrialType as TrialType, Item1.Item1.Response as Response, Item1.Item1.TrialResult as TrialResult, Item1.Item1.LeftVel as LeftVel, Item1.Item1.RightVel as RightVel, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        #6, #7, #8, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\Test20240722_DotMotion_SpeedTuning_TrialParams.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #7, #1 -> Disable SubscribeWhen
    GroupWorkflow QuadLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #9
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Quad) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject QuadLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012_SparseNoise_20250304__Quad.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #1, #9 -> SubscribeWhen

    Disable GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #4
        #0, #1, #2, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    Disable GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject VideoLEDAsync => #3
        #0, #2, #3 -> Zip => #4
        SubscribeSubject ArduinoTime => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as Photodiode,
            Item1.Item1.Item1.Item2 as QuadState,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        SubscribeSubject Photodiode => #15
        SubscribeSubject LastSyncPulseTime => #16
        SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #20
        #15, #16, #17, #20 -> Zip => #21
        SubscribeSubject RenderFrameCount => #22
        #21, #22 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as PDOutput, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    Disable GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

    Disable GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")

    GroupWorkflow TwoPLogging
        Disable SubscribeSubject TwoPFrameTime => #0
        Disable SubscribeSubject WideFieldFrameTime => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TwoPFrame,
            Item1.Item1.Item1.Item2 as WideFieldFrameTime,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        SubscribeSubject TwoPFrameTime => #15
        Disable SubscribeSubject LastSyncPulseTime => #16
        Disable SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #20
        #15, #16, #17, #20 -> Zip => #21
        SubscribeSubject RenderFrameCount => #22
        SubscribeSubject LastSyncPulseTime => #23
        SubscribeSubject ArduinoTime => #24
        #23, #24 -> Zip => #25
        #22, #25 -> CombineLatest => #26
        #21, #26 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as TwoPFrameTime,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject TwoPLog
        -> WorkflowOutput

    Disable GroupWorkflow PhotodiodeLogging
        Disable SubscribeSubject PDandAsync => #0
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Disable Zip => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

    GroupWorkflow QuadLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject QuadState => #14
        Disable SubscribeSubject LastSyncPulseTime => #15
        Disable SubscribeSubject ArduinoTime => #16
        #14 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
        #14, #15, #16, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as QuadState, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject QuadLog
        -> Disable WorkflowOutput

        SubscribeSubject QuadState => #26
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #29
        #26, #29 -> Zip => #30
        SubscribeSubject RenderFrameCount => #31
        SubscribeSubject LastSyncPulseTime => #32
        SubscribeSubject ArduinoTime => #33
        #32, #33 -> Zip => #34
        #31, #34 -> CombineLatest => #35
        #30, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject QuadLog
        -> WorkflowOutput

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=SparseNoise_20250304_) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=C:\DATA\Subjects\M25012\Bonsai\20250304\M25012) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName

Disable Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
-> Disable StringProperty(Value=l30)
-> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
-> Disable IntProperty(Value=1)

Disable Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
-> Disable StringProperty(Value=r30)
-> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
-> Disable IntProperty(Value=2)
