WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow "Set Bonvision Params"
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Triangles
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\Triangles.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=dots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\8914_generated.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern 3"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern 3.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="triangle pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\triangle pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="star pattern 4"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\star pattern 4.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=45Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\45Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=135Grat_12
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\135Grat_12.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white cross"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white cross.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white plus"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white plus.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="black bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\black bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="white bar"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\white bar.jpg"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="square white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\square white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white R"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white R.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot white L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot white L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot black L"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot black L.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_45_6
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid_45_6.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern black 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern black 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name="dot pattern white 1"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName="Textures\dot pattern white 1.png"
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid_50
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid_50perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat_50
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat_50perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn1_25perC
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn1_25perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn2_25perC
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn2_25perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn3_25perC
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn3_25perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=smoothed_fwn4_25perC
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\smoothed_fwn4_25perC.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #7
    -> GroupWorkflow FrameEventLoggers
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
        #0, #1 -> IncludeWorkflow Events(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_WheelLog.csv) => #2
        ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
        #2, #3 -> IncludeWorkflow EyeEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_EyeLog.csv)
        -> Disable IncludeWorkflow saveMousePos(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_saveMousePos.csv)
        -> Disable IncludeWorkflow TrialEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=ClosedLoop_Trial.csv) => #6
        ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
        #6, #7 -> IncludeWorkflow PDAsyncEvents(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test_data\Masa2tracks_PDAsync.csv)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
    -> BehaviorSubject Draw3DStim
    -> IncludeWorkflow(Path=Extensions\DisplaySettingsVR.bonsai)
    -> WorkflowOutput
    #7 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
    -> BehaviorSubject Draw2D
    #7 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION_2PRig_v1.CSV, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"

    GroupWorkflow "Track Trial" => #17
        SubscribeSubject WheelInput
        -> Disable Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1)
        -> Condition IgnoreOverflowTicks => #3
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=0.0613))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=DoubleProperty(Value=-1140))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #13
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=140))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-1000))
            -> WorkflowOutput
        Timer(DueTime=PT1M30S, Period=PT0S) => #14
        #13, #14 -> TakeUntil => #15
        Timer(DueTime=PT1S, Period=PT0S) => #16
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel MButton XButton1 XButton2 A B C D E F G Shift", SuppressRepetitions=false) => #17
        #16, #17 -> SubscribeWhen => #18
        #15, #18 -> TakeUntil => #19
        SubscribeSubject MousePos
        -> Condition => #21
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #19, #21 -> SkipUntil
        -> Unit
        -> Last
        -> WorkflowOutput

        Disable GroupWorkflow "Check No Early Licks"
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    GroupWorkflow "GreyScreen Trial" => #18
        SubscribeSubject WheelInput
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> Bonsai.Dsp.Difference(Order=1) => #2
        ExternalizedMapping(Value(DisplayName=Gain)) => #3
        #2, #3 -> Multiply(Operand=DoubleProperty(Value=0))
        -> Accumulate
        -> Condition => #6
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #8
        #6, #8 -> Add(Operand=DoubleProperty(Value=-1140)) => #9
        SubscribeSubject "GreyScreen Duration"
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S, Period=PT0S) => #12
        #9, #12 -> TakeUntil => #13
        SubscribeSubject Startpos
        -> Condition => #15
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #13, #15 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #20
        Disable ExternalizedMapping(Count) => #21
        #20, #21 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #17, #18 -> Amb => #19
    Disable SubscribeSubject AbortTrial => #20
    Disable SubscribeSubject SerialToSend
    -> Disable Skip(Count=1)
    -> Disable Take(Count=1) => #23
    #20, #23 -> Disable TakeUntil => #24
    #19, #24 -> Disable Merge
    -> First => #26
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=60000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.3722649S, Period=PT0S)
    -> Unit => #32
    #26, #32 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Last
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        Disable GroupWorkflow Archive
            Disable GroupWorkflow blocker
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
            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-1060
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1090
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1070
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1050
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1030
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-1010
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2959.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2939.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2919.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 1 pillar 4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3040.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2900.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3039.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2899.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow Backup
                Disable GroupWorkflow "Track 1 Textures"
                    GroupWorkflow "Track 1 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+60
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=-60
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+30
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-90
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+50
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-70
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+70
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-50
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+90
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-30
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 Texture5"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=-10
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=0, Y=0, Z=0)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 2 Textures"
                    GroupWorkflow "Track 2 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 2 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+1110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                        #8, #9 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #11
                        #11, #9 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 5 Aman original Track"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-4
                              TranslationY=2
                              TranslationZ=3940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.977
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+4090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.97
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.88
                              TranslationY=2
                              TranslationZ=3970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 pillar"
                    GroupWorkflow "Track 4 Main Room"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=100
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3100.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2960.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3099.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2959.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3080.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2940.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3079.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2939.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 pillar 3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3060.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2920.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3059.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2919.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 1 pillar 4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=5
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                        #6, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                        #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3040.5
                        -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Front
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2900.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput
                        ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                        #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it+3039.5
                        -> PropertyMapping(TranslationZ) => #14
                        #14, #4 -> GroupWorkflow Back
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=4.5
                              TranslationY=2
                              TranslationZ=2899.5
                              ScaleX=1
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=180
                              RotationX=180
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3040
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2900
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2920
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3080
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3100
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=16
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-7.98
                              TranslationY=2
                              TranslationZ=2960
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 3 Textures"
                    GroupWorkflow "Track 3 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=1940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=-1.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=2
                              TranslationY=5.98
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 3 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+2110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=1990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                Disable GroupWorkflow "Track 4 Textures"
                    GroupWorkflow "Track 4 MainRoom"
                        SubscribeSubject MousePos => #0
                        ExternalizedMapping(Expression) => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3060
                        -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.99
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=16
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ)
                        -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ(Selector=it))
                        -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-8
                              TranslationY=2
                              TranslationZ=2940
                              ScaleX=120
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture1"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3030
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2910
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture2"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3050
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2930
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture3"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3070
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=-1.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-2
                              TranslationY=5.98
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=4
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2950
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture4"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3090
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2970
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

                    GroupWorkflow "Track 4 Texture5"
                        ExternalizedMapping(Expression) => #0
                        SubscribeSubject MousePos => #1
                        #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                          Expression: it+3110
                        -> PropertyMapping(TranslationZ) => #3
                        ExternalizedMapping(TextureName) => #4
                        #3, #4 -> GroupWorkflow Floor
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=-1.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #6
                        #6, #4 -> GroupWorkflow Right
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=8
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #8
                        #8, #4 -> GroupWorkflow Ceil
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=0
                              TranslationY=5.98
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=-90
                            -> WorkflowOutput
                        #2 -> PropertyMapping(TranslationZ) => #10
                        #10, #4 -> GroupWorkflow Left
                            SubscribeSubject Draw3DStim => #0
                            ExternalizedMapping(TextureName) => #1
                            #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                            ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                            #2, #3 -> IncludeWorkflow
                              Path=BonVision:Primitives.DrawTexturedModel.bonsai
                              TranslationX=-3.98
                              TranslationY=2
                              TranslationZ=2990
                              ScaleX=8
                              ScaleY=8
                              ScaleZ=0
                              MeshName=Plane
                              Ambient(X=0.5, Y=0.5, Z=0.5)
                              Diffuse(X=1, Y=1, Z=1)
                              Specular(X=1, Y=1, Z=1)
                              SpecularExponent=10
                              RotationZ=0
                              RotationY=90
                              RotationX=0
                            -> WorkflowOutput

        Disable GroupWorkflow "Track 5 Aman original Track" => #1
            GroupWorkflow "Track 3 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=3940
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=3940
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=3940
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=3940
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3910
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.88
                      TranslationY=2
                      TranslationZ=3910
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3910
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3910
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3930
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.977
                      TranslationY=2
                      TranslationZ=3930
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3930
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3930
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3950
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=3950
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3950
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3950
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3970
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=3970
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3970
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3970
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        Disable SubscribeSubject Startpos => #2
        -> Disable LessThan(Operand=DoubleProperty(Value=0)) => #3
        #2 -> Disable GreaterThan(Operand=DoubleProperty(Value=-200)) => #4
        #3, #4 -> Disable Zip
        -> Disable Condition => #6
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #1, #6 -> Disable SubscribeWhen

        Disable GroupWorkflow "Track 5 Aman original Track" => #8
            GroupWorkflow "Track 3 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-110
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.88
                      TranslationY=2
                      TranslationZ=-110
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-110
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=-110
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-90
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.977
                      TranslationY=2
                      TranslationZ=-90
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-90
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=-90
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=-70
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-50
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=-50
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-50
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=-50
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        Disable SubscribeSubject Startpos => #9
        -> Disable LessThan(Operand=DoubleProperty(Value=-1000)) => #10
        #9 -> Disable GreaterThan(Operand=DoubleProperty(Value=-1200)) => #11
        #10, #11 -> Disable Zip
        -> Disable Condition => #13
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #8, #13 -> Disable SubscribeWhen

        GroupWorkflow "Track 2 Textures" => #15
            GroupWorkflow "Track 2 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=30.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=30.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=30.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=30.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=50.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=50.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=50.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=50.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=70.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=90.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=90.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=90.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=90.1931152
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #16
        -> LessThan(Operand=DoubleProperty(Value=-1000)) => #17
        #16 -> GreaterThan(Operand=DoubleProperty(Value=-1200)) => #18
        #17, #18 -> Zip
        -> Condition => #20
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #15, #20 -> SubscribeWhen

    Disable GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            SubscribeSubject RightCorrect
            -> Skip(Count=1) => #1
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> FloatProperty(Value=40) => #3
            #1 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=20))
                -> WorkflowOutput
            -> FloatProperty(Value=100) => #5
            #3, #5 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject RightValveOpenTime

            SubscribeSubject LeftCorrect
            -> Skip(Count=1) => #10
            -> Condition "If passive"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=30) => #12
            #10 -> Condition "If active"
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            -> FloatProperty(Value=100) => #14
            #12, #14 -> Amb
            -> Disable Take(Count=1)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #18
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=30)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
              Expression: it.ToString()
            #18, #22 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #26
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=40)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression: it.ToString()
            #26, #30 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l30) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r40) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty(Value="")
        -> BehaviorSubject SerialToSend
        -> Disable Skip(Count=1)
        -> Disable Take(Count=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> Bonsai.IO.Ports.SerialWriteLine(PortName=ArduinoSerial, NewLine=\r) => #39
        SubscribeSubject "Response Value"
        -> PropertyMapping(Value) => #41
        #39, #41 -> IntProperty(Value=1)
        -> Disable TakeUntil
        -> MulticastSubject "Correct Lap"

        SubscribeSubject RightValveOpenTime => #45
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=40))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #47
        #45 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=100))
            -> WorkflowOutput
        -> IntProperty(Value=20) => #49
        SubscribeSubject LeftValveOpenTime => #50
        -> Condition "If passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=30))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #52
        #50 -> Condition "If active"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=100))
            -> WorkflowOutput
        -> IntProperty(Value=10) => #54
        #47, #49, #52, #54 -> Amb
        -> BehaviorSubject "Response Value"

    Disable GroupWorkflow "Get Licks"
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
    Disable GroupWorkflow "Performance Tracking"
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
    Disable GroupWorkflow "Performance Calculation"
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
    GroupWorkflow "Variable to main workflow"
        SubscribeSubject "Track ID"
        -> MulticastSubject "Track ID (main)"

        Disable SubscribeSubject LickState
        -> Disable MulticastSubject "LickState (main)"

        SubscribeSubject MousePos
        -> MulticastSubject "MousePos (main)"

        Disable SubscribeSubject MousePos
        -> Disable MulticastSubject "MousePos (main)"

        Disable SubscribeSubject "Correct Lap"
        -> Disable MulticastSubject "Correct Lap (main)"

        SubscribeSubject "Learning Type"
        -> MulticastSubject "Learning Type (main)"
-> Concat
-> BehaviorSubject "End of lap" => #7
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #8
#7, #8 -> SubscribeWhen

GroupWorkflow "Init Variables"
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    IntProperty(Value=0)
    -> BehaviorSubject "Track ID (main)"

    IntProperty(Value=0)
    -> BehaviorSubject "LickState (main)"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect
        #0 -> BehaviorSubject "Correct Lap"

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    FloatProperty(Value=200)
    -> BehaviorSubject "MousePos (main)"

    IntProperty(Value=0) => #27
    -> BehaviorSubject "Lap count Track 1"
    #27 -> BehaviorSubject "Lap count Track 2"

    FloatProperty(Value=0) => #30
    -> BehaviorSubject "Track 1 Performance"
    #30 -> BehaviorSubject "Track 2 Performance"

    IntProperty(Value=0)
    -> BehaviorSubject "Correct Lap (main)"

    FloatProperty(Value=0)
    -> BehaviorSubject "Total reward volume"

    IntProperty(Value=0)
    -> BehaviorSubject Timestamp

    IntProperty(Value=0)
    -> BehaviorSubject "Manual reward"

    IntProperty(Value=0)
    -> BehaviorSubject "Learning Type (main)"

    Disable FloatProperty(Value=0)
    -> Disable PublishSubject Photodiode

    ExternalizedMapping(Value(DisplayName="Saving Dir"))
    -> StringProperty(Value=C:\DATA\TempStimData)
    -> BehaviorSubject "Saving Dir"

Disable GroupWorkflow "Performance Calculation"
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
SubscribeSubject "Correct Lap" => #12
-> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #15
SubscribeSubject "Track ID (main)" => #16
-> Condition "If Track 1"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 1" => #20
#15, #20 -> CombineLatest
-> Divide
-> MulticastSubject "Track 1 Performance"
#12 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=20))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate => #26
#16 -> Condition "If Track 2"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=1)
-> Accumulate
-> MulticastSubject "Lap count Track 2" => #30
#26, #30 -> CombineLatest
-> Divide
-> MulticastSubject "Track 2 Performance"

SubscribeSubject "Correct Lap" => #34
-> Condition "If Track 1 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #36
#34 -> Condition "If Track 1 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #38
#34 -> Condition "If Track 2 passive"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=2))
    -> WorkflowOutput
-> FloatProperty(Value=10) => #40
#34 -> Condition "If Track 2 active"
    WorkflowInput Source1
    -> Equal(Operand=IntProperty(Value=10))
    -> WorkflowOutput
-> FloatProperty(Value=50) => #42
#36, #38, #40, #42 -> Merge
-> Accumulate
-> MulticastSubject "Total reward volume"

IncludeWorkflow(Path=Extensions\ArduinoRead_MainVR.bonsai, PortName=COM3) => #46
Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #47
#46, #47 -> SubscribeWhen
Disable GroupWorkflow EyeCamera => #49
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#49, #47 -> Disable SubscribeWhen

GroupWorkflow Loggers
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_Wheel) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_Wheel.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow PDLogger => #3
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_Photodiode) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_Photodiode.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #3 -> SubscribeWhen
    GroupWorkflow TwoPLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TwoPLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #5 -> SubscribeWhen
    GroupWorkflow TrialInfoLogger => #7
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_TrialInfoLog) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TrialLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_TrialInfoLog.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #7 -> SubscribeWhen
    GroupWorkflow QuadLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #9
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_Quad) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject QuadLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_Quad.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #9 -> SubscribeWhen
    GroupWorkflow MousePosLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #11
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_MousePos) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject MousePosLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\2test\M25041_VRCorr_20250422_00001_MousePos.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #11 -> SubscribeWhen

    GroupWorkflow WheelLogging
        Disable SubscribeSubject WheelInput => #0
        Disable SubscribeSubject LastSyncPulseTime => #1
        Disable SubscribeSubject ArduinoTime => #2
        #0 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #0, #1, #2, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as Position, Item1.Item5 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject WheelLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject "MousePos (main)"
        Disable SubscribeSubject "MousePos (main)"

        Disable SubscribeSubject WheelInput => #13
        Disable SubscribeSubject "MousePos (main)" => #14
        #13, #14 -> Disable CombineLatest => #15
        Disable SubscribeSubject LastSyncPulseTime => #16
        Disable SubscribeSubject ArduinoTime => #17
        #16, #17 -> Disable Zip => #18
        #15, #18 -> Disable WithLatestFrom => #19
        Disable SubscribeSubject RenderFrameCount => #20
        #19, #20 -> Disable WithLatestFrom => #21
        #19 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #23
        #21, #23 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as WheelInput,
            Item1.Item1.Item1.Item2 as MousePosition,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject WheelLog
        -> Disable WorkflowOutput

        SubscribeSubject WheelInput => #28
        SubscribeSubject LastSyncPulseTime => #29
        SubscribeSubject ArduinoTime => #30
        #28 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #33
        #28, #29, #30, #33 -> Zip => #34
        SubscribeSubject RenderFrameCount => #35
        #34, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow MousePosLogging
        SubscribeSubject "MousePos (main)" => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Bonsai.Dsp.Difference(Order=1)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #4
        #0, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        SubscribeSubject LastSyncPulseTime => #7
        SubscribeSubject ArduinoTime => #8
        #7, #8 -> Zip => #9
        #6, #9 -> CombineLatest => #10
        #5, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as MousePosition,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject MousePosLog
        -> WorkflowOutput

    GroupWorkflow TwoPLogging
        Disable SubscribeSubject TwoPFrameTime => #0
        Disable SubscribeSubject WideFieldFrameTime => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TwoPFrame,
            Item1.Item1.Item1.Item2 as WideFieldFrameTime,
            Item1.Item1.Item2 as LastSyncPulseTime,
            Item1.Item1.Item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject TwoPFrameTime => #14
        Disable SubscribeSubject WideFieldFrameTime => #15
        #14, #15 -> Disable CombineLatest => #16
        Disable SubscribeSubject LastSyncPulseTime => #17
        Disable SubscribeSubject ArduinoTime => #18
        #17, #18 -> Disable Zip => #19
        #16, #19 -> Disable WithLatestFrom => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom => #22
        #20 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #24
        #22, #24 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TwoPFrame,
            Item1.Item1.Item1.Item2 as WideFieldFrameTime,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject TwoPFrameTime => #29
        Disable SubscribeSubject LastSyncPulseTime => #30
        Disable SubscribeSubject ArduinoTime => #31
        #29 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #34
        #29, #30, #31, #34 -> Disable Zip => #35
        Disable SubscribeSubject RenderFrameCount => #36
        #35, #36 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as TwoPFrameTime, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        SubscribeSubject TwoPFrameTime => #41
        Disable SubscribeSubject LastSyncPulseTime => #42
        Disable SubscribeSubject ArduinoTime => #43
        #41 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #46
        #41, #42, #43, #46 -> Zip => #47
        SubscribeSubject RenderFrameCount => #48
        SubscribeSubject LastSyncPulseTime => #49
        SubscribeSubject ArduinoTime => #50
        #49, #50 -> Zip => #51
        #48, #51 -> CombineLatest => #52
        #47, #52 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as TwoPFrameTime,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject TwoPLog
        -> WorkflowOutput

    GroupWorkflow PDLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject Photodiode => #14
        Disable SubscribeSubject QuadState => #15
        #14, #15 -> Disable CombineLatest => #16
        Disable SubscribeSubject LastSyncPulseTime => #17
        Disable SubscribeSubject ArduinoTime => #18
        #17, #18 -> Disable Zip => #19
        #16, #19 -> Disable WithLatestFrom => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom => #22
        #20 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #24
        #22, #24 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1 as Photodiode,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        SubscribeSubject Photodiode => #29
        SubscribeSubject LastSyncPulseTime => #30
        SubscribeSubject ArduinoTime => #31
        #29 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #34
        #29, #30, #31, #34 -> Zip => #35
        SubscribeSubject RenderFrameCount => #36
        #35, #36 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as PDOutput, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow QuadLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject QuadState => #14
        Disable SubscribeSubject LastSyncPulseTime => #15
        Disable SubscribeSubject ArduinoTime => #16
        #14 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
        #14, #15, #16, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as QuadState, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject QuadLog
        -> Disable WorkflowOutput

        SubscribeSubject QuadState => #26
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #29
        #26, #29 -> Zip => #30
        SubscribeSubject RenderFrameCount => #31
        SubscribeSubject LastSyncPulseTime => #32
        SubscribeSubject ArduinoTime => #33
        #32, #33 -> Zip => #34
        #31, #34 -> CombineLatest => #35
        #30, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject QuadLog
        -> WorkflowOutput

    GroupWorkflow TrialInfoLogging
        Disable SubscribeSubject "Track ID (main)" => #0
        Disable SubscribeSubject Timestamp => #1
        #0, #1 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #3
        Disable SubscribeSubject "Lap count Track 1" => #4
        #0, #4 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #6
        Disable SubscribeSubject "Lap count Track 2" => #7
        #0, #7 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #9
        Disable SubscribeSubject "MousePos (main)" => #10
        #0, #10 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #12
        Disable SubscribeSubject "Learning Type (main)" => #13
        Disable SubscribeSubject "Track ID (main)" => #14
        #13, #14 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item1) => #16
        #0, #3, #6, #9, #12, #16 -> Disable CombineLatest => #17
        Disable SubscribeSubject LastSyncPulseTime => #18
        Disable SubscribeSubject ArduinoTime => #19
        #17, #18, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom => #22
        #20 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #24
        #22, #24 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TrackID,
            Item1.Item1.Item1.Item2 as LapCountTrack1,
            Item1.Item1.Item1.Item3 as LapCountTrack2,
            Item1.Item1.Item1.Item4 as MousePosition,
            Item1.Item1.Item1.Item5 as LearningType,
            Item1.Item1.Item2 as LastSyncPulseTime,
            Item1.Item1.Item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TrialLog
        -> Disable WorkflowOutput

        SubscribeSubject "Track ID (main)" => #29
        -> IntProperty(Value=1)
        -> Accumulate => #31
        #29 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #33
        #31, #33 -> Zip => #34
        SubscribeSubject LastSyncPulseTime => #35
        SubscribeSubject ArduinoTime => #36
        Source2=#35, Source3=#36 -> Zip => #37
        #34, #37 -> WithLatestFrom => #38
        SubscribeSubject RenderFrameCount => #39
        #38, #39 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1 as LapCount,
            Item1.Item1.Item2 as BonsaiTime,
            Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item2.Item2 as ArduinoTime,
            Item2 as RenderFrameCount)
        -> BehaviorSubject TrialLog
        -> WorkflowOutput

ExternalizedMapping(StimulusID, MouseID) => #52
Source2=#52 -> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=VRCorr_20250422_00001) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=C:\DATA\Subjects\M25041\Bonsai\2test\M25041) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuadSubject

GroupWorkflow Quad(Description=Quad) => #56
    GroupWorkflow "Black quad" => #0
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=0)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0450902S, Period=PT0S)
    -> Unit => #6
    #0, #6 -> TakeUntil => #7
    GroupWorkflow "White quad" => #8
        SubscribeSubject DrawQuadSubject
        -> FloatProperty(Value=1)
        -> WorkflowOutput
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0443466S, Period=PT0S)
    -> Unit => #14
    #8, #14 -> TakeUntil => #15
    #7, #15 -> Concat
    -> Repeat
    -> MulticastSubject QuadState => #18
    -> WorkflowOutput
    #18 -> PropertyMapping(Ambient) => #20
    SubscribeSubject Draw3DStim => #21
    #20, #21 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawModel.bonsai
      TranslationX=0.1
      TranslationY=-0.07
      TranslationZ=0
      RotationZ=0
      RotationY=0
      RotationX=0
      ScaleX=0.139534891
      ScaleY=0.139534891
      ScaleZ=0.3488372
      Ambient(X=1, Y=1, Z=1)
      Diffuse(X=0, Y=0, Z=0)
      Specular(X=0, Y=0, Z=0)
      SpecularExponent=0
      MeshName=cube3d
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #57
#56, #57 -> SubscribeWhen
