WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #2
-> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount
#2 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
#2 -> IncludeWorkflow StimulusParams(Path=Extensions\FrameEventLoggerWithTime.bonsai, Append=false, Overwrite=true, Suffix=None, FileName="")
-> Disable IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #8
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #10
#8, #10 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
-> PublishSubject Draw
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #13
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#13 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0000016696521, Z=0), Translation(X=12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))

Disable WorkflowOutput

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow "InitialGray Screen" => #28
    SubscribeSubject Draw
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=10
      ExtentY=10
      LocationX=77
      LocationY=-30
      Layer=0
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    -> FloatProperty(Value=0)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #29
GroupWorkflow GratingsSequenceStimulus => #30
    Bonsai.IO.CsvReader(FileName=ForVersion2_OrthographicView_4x3LeftMiddleScreens_LocationsPlus4OrientationsPlusDelayForRF_2PRigDisp.csv, ListSeparator=",", SkipRows=1) => #0
    SubscribeSubject StartStimulus => #1
    #0, #1 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        double.Parse(it[0]) * Math.PI / 180 as Orientation,
        double.Parse(it[1]) as LocationX,
        double.Parse(it[2]) as LocationY,
        double.Parse(it[3]) as Delay)
    -> InputMapping
      Selector="Orientation,LocationX,LocationY,Delay"
      Orientation(Selector=Orientation)
      X(Selector=LocationX)
      Y(Selector=LocationY)
      Delay(Selector=Delay)
    -> BonVision.Collections.CreateGratingTrial(Delay=0, Duration=0.25, Diameter=30, X=15, Y=-22, Contrast=1, SpatialFrequency=0.08, TemporalFrequency=1, Orientation=180)
    -> GroupWorkflow GratingSequenceGroupflow
        WorkflowInput Source1 => #0
        ExternalizedMapping(Phase, SquareWave, Radius, Aperture, Opacity) => #1
        #0, #1 -> CreateObservable
            WorkflowInput Source1
            -> AsyncSubject Parameters

            SubscribeSubject Draw => #2
            SubscribeSubject Parameters
            -> IncludeWorkflow StimulusParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            -> PropertyMapping => #5
              LocationX(Selector=X)
              LocationY(Selector=Y)
              Angle(Selector=Orientation)
              SpatialFrequency(Selector=SpatialFrequency)
              TemporalFrequency(Selector=TemporalFrequency)
              Contrast(Selector=Contrast)
              ExtentX(Selector=Diameter)
              ExtentY(Selector=Diameter)
            ExternalizedMapping(Phase, SquareWave, Radius, Aperture, Opacity) => #6
            #2, #5, #6 -> IncludeWorkflow => #7
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=15
              LocationY=-22
              Layer=0
              ExtentX=30
              ExtentY=30
              SpatialFrequency=0.08
              TemporalFrequency=1
              Phase=0
              Angle=180
              SquareWave=true
              Contrast=1
              DutyCycle=0.5
              Radius=0.7
              Aperture=0
              Opacity=1
            SubscribeSubject Parameters
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(Duration)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.25S)
            -> Sink UpdatePD
                WorkflowInput Source1
                -> WorkflowOutput

                ExternalizedMapping(Value(DisplayName=PDstate))
                -> FloatProperty(Value=1)
                -> MulticastSubject QuadState
            -> Bonsai.Shaders.SampleOnRenderFrame => #13
            #7, #13 -> TakeUntil => #14
            SubscribeSubject Parameters
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(Delay)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0S)
            -> Sink UpdatePD
                WorkflowInput Source1
                -> WorkflowOutput

                ExternalizedMapping(Value(DisplayName=PDstate))
                -> FloatProperty(Value=0)
                -> MulticastSubject QuadState
            -> Bonsai.Shaders.SampleOnRenderFrame
            -> Disable IncludeWorkflow Location(Path=BonVision:Logging.LogEvent.bonsai, Format=NewLocationON, Selector=nil) => #21
            #14, #21 -> SubscribeWhen

            Disable SubscribeSubject Parameters => #23
            -> Disable MemberSelector(Selector=X)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(it as X)
            -> Disable IncludeWorkflow Location(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)
            #23 -> Disable MemberSelector(Selector=Y)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(it as Y)
            -> Disable IncludeWorkflow Location(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        -> Concat
        -> WorkflowOutput

    GroupWorkflow VarInIt
        BooleanProperty(Value=false)
        -> BehaviorSubject TimerExpired

        StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
        -> BehaviorSubject "Saving Dir"

        FloatProperty(Value=1)
        -> BehaviorSubject RepCounter

        Bonsai.Numerics.CreateRandom(Seed=42)
        -> BehaviorSubject Random

        FloatProperty(Value=1)
        -> BehaviorSubject TrialProgress

        IntProperty(Value=0)
        -> BehaviorSubject SyncPulse

        FloatProperty(Value=0.1)
        -> BehaviorSubject DurationSingleImage
Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #31
#30, #31 -> TakeUntil => #32
#29, #32 -> SubscribeWhen => #33
#28, #33 -> TakeUntil
GroupWorkflow "FinallGray Screen" => #35
    SubscribeSubject Draw
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0
      ExtentY=0
      LocationX=-80
      LocationY=-30
      Layer=1
      Angle=0
      ColorR=1
      ColorG=1
      ColorB=1
      ColorA=1
    -> FloatProperty(Value=0)
    -> WorkflowOutput
#35, #31 -> SubscribeWhen

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> BehaviorSubject StartStimulus

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037_RFMapping_20250424_00001_Wheel.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow TwoPLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TwoPLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037_RFMapping_20250424_00001_2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #3 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037_RFMapping_20250424_00001_Photodiode.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    GroupWorkflow QuadLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Quad) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject QuadLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037_RFMapping_20250424_00001_Quad.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #1, #7 -> SubscribeWhen
    GroupWorkflow StimulusParamsLogger => #9
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_StimulusParams) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Name)
        -> SubscribeSubject StimulusParamsLog => #8
        ExternalizedMapping(Overwrite, Suffix) => #9
        #6, #8, #9 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037_RFMapping_20250424_00001_StimulusParams.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
        -> Disable WorkflowOutput
    #1, #9 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #4
        #0, #1, #2, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as Photodiode,
            Item1.Item1.Item1.Item2 as QuadState,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        SubscribeSubject Photodiode => #15
        SubscribeSubject LastSyncPulseTime => #16
        SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #20
        #15, #16, #17, #20 -> Zip => #21
        SubscribeSubject RenderFrameCount => #22
        #21, #22 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as PDOutput, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow TwoPLogging
        Disable SubscribeSubject TwoPFrameTime => #0
        Disable SubscribeSubject WideFieldFrameTime => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TwoPFrame,
            Item1.Item1.Item1.Item2 as WideFieldFrameTime,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        SubscribeSubject TwoPFrameTime => #15
        Disable SubscribeSubject LastSyncPulseTime => #16
        Disable SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #20
        #15, #16, #17, #20 -> Zip => #21
        SubscribeSubject RenderFrameCount => #22
        SubscribeSubject LastSyncPulseTime => #23
        SubscribeSubject ArduinoTime => #24
        #23, #24 -> Zip => #25
        #22, #25 -> CombineLatest => #26
        #21, #26 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as TwoPFrameTime,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject TwoPLog
        -> WorkflowOutput

    GroupWorkflow QuadLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject QuadState => #14
        Disable SubscribeSubject LastSyncPulseTime => #15
        Disable SubscribeSubject ArduinoTime => #16
        #14 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
        #14, #15, #16, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as QuadState, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject QuadLog
        -> Disable WorkflowOutput

        SubscribeSubject QuadState => #26
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #29
        #26, #29 -> Zip => #30
        SubscribeSubject RenderFrameCount => #31
        SubscribeSubject LastSyncPulseTime => #32
        SubscribeSubject ArduinoTime => #33
        #32, #33 -> Zip => #34
        #31, #34 -> CombineLatest => #35
        #30, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject QuadLog
        -> WorkflowOutput

    GroupWorkflow StimulusParamsLogging
        Disable SubscribeSubject StimulusParams => #0
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Disable Zip => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as StimulusParams, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> Disable BehaviorSubject StimulusParamsLog
        -> Disable WorkflowOutput

        SubscribeSubject StimulusParams => #9
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
        #9, #11 -> Zip => #12
        SubscribeSubject RenderFrameCount => #13
        SubscribeSubject LastSyncPulseTime => #14
        SubscribeSubject ArduinoTime => #15
        #14, #15 -> Zip => #16
        #13, #16 -> CombineLatest => #17
        #12, #17 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject StimulusParamsLog
        -> WorkflowOutput

GroupWorkflow Arduino
    ExternalizedMapping(PortName)
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM3
      BaudRate=1000000
      Encoding=utf-8
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern=%i\t%i\t%i\t%i\t%f\t%i\t%i\t%i)
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> DistinctUntilChanged
    -> BehaviorSubject TwoPFrameTime
    #4 -> MemberSelector(Selector=Item7)
    -> DistinctUntilChanged
    -> BehaviorSubject WideFieldFrameTime
    #4 -> MemberSelector(Selector=Rest.Item1)
    -> BehaviorSubject ArduinoTime

GroupWorkflow QuadState
    SubscribeSubject Draw => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
    #0, #2 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=10
      ExtentY=10
      LocationX=77
      LocationY=-30
      Layer=1
      Angle=0
      ColorR=1
      ColorG=1
      ColorB=1
      ColorA=1

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

ExternalizedMapping(MouseID_withPath, StimulusID)
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=RFMapping_20250424_00001) => #1
    ExternalizedMapping(Value(DisplayName=MouseID_withPath))
    -> StringProperty(Value=C:\DATA\Subjects\M25037\Bonsai\20250424\M25037) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix
    -> WorkflowOutput

    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_PDandSync.csv, Selector="")
    -> BehaviorSubject PDandSyncName
