WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #2
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
#2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
-> PublishSubject DrawStimuli
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #7
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#7 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#7 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=HALFINTENSITY_LUT_NoRed_SALEEM20_20250219.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.666, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
#2 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
#2 -> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

WorkflowInput Source1 => #25
ExternalizedMapping(Count(DisplayName=nReps, Category=Trial)) => #26
#25, #26 -> GroupWorkflow Speed2D => #27
    WorkflowInput Source1 => #0
    -> Disable GroupWorkflow S2_moveRight => #1
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=16
              VelocityX2=16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=128
              VelocityX2=128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=256
              VelocityX2=256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> GroupWorkflow Blank => #2
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=nil
              dotLifeBool=nil
              dotLifetime=nil
              Colour1=nil
              Colour2=nil
              numDots1=0
              numDots2=0
              Contrast1=nil
              Contrast2=nil
              VelocityX1=nil
              VelocityX2=nil
              VelocityY1=nil
              VelocityY2=nil
              Coherence1=nil
              Coherence2=nil
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> GroupWorkflow S2_moveLeft => #3
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-16
              VelocityX2=-16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-128
              VelocityX2=-128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-256
              VelocityX2=-256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #1, #2, #3 -> Concat => #4
    SubscribeSubject Random => #5
    #4, #5 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #4
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> PropertyMapping(rndseed) => #8
            #1, #4, #8 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=46) => #9
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #11
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #14
            #11, #14 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #17
            #4, #17 -> GenerateDotLives(dotLifetime=60, numDots=573) => #18
            #9, #18 -> Zip => #19
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Diameter) => #22
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX1) => #24
            #14, #24 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #27
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY1) => #29
            #14, #29 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #32
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence1)
            -> PropertyMapping(Coherence) => #35
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast1)
            -> PropertyMapping(ColorA) => #38
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour1)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #41
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifeBool)
            -> PropertyMapping(dotLifetimeBool) => #44
            SubscribeSubject StimulusXLoc
            -> PropertyMapping(LocationX) => #46
            #19, #22, #27, #32, #35, #38, #41, #44, #17, #46 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #47
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=-95, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #50
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> Add(Operand=IntProperty(Value=99))
            -> PropertyMapping(rndseed) => #55
            #1, #50, #55 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=145) => #56
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #58
            #58, #14 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #61
            #50, #61 -> GenerateDotLives(dotLifetime=60, numDots=573) => #62
            #56, #62 -> Zip => #63
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX2) => #65
            #14, #65 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #68
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY2) => #70
            #14, #70 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #73
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence2)
            -> PropertyMapping(Coherence) => #76
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast2)
            -> PropertyMapping(ColorA) => #79
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour2)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #82
            SubscribeSubject StimulusXLoc
            -> PropertyMapping(LocationX) => #84
            #63, #22, #68, #73, #76, #79, #82, #44, #61, #84 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #85
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=-95, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #47, #85 -> Zip => #86
            Disable Timer(DueTime=PT0.05S, Period=PT0S) => #87
            #86, #87 -> Disable SubscribeWhen => #88
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #93
            #88, #93 -> TakeUntil
            -> Last => #95
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #100
            #95, #100 -> Bonsai.Shaders.Delay(DueTime=PT2S)
            -> Unit
            -> WorkflowOutput
            #95 -> FloatProperty(Value=0) => #104
            SubscribeSubject DrawStimuli
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #107
            #104, #107 -> Merge
            -> MulticastSubject QuadState
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)
        -> MulticastSubject TrialParams
    -> Concat => #8
    ExternalizedMapping(Count) => #9
    #8, #9 -> RepeatCount(Count=20)
    -> WorkflowOutput

    Disable GroupWorkflow S2dirRecordLeft
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput

    Disable GroupWorkflow S2dir
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #28
#27, #28 -> SubscribeWhen

ExternalizedMapping(Value(DisplayName=StimulusLocationX))
-> GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

    ExternalizedMapping(Value)
    -> FloatProperty(Value=-95)
    -> BehaviorSubject StimulusXLoc

SubscribeSubject DrawStimuli => #32
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #34
#32, #34 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=12
  ExtentY=12
  LocationX=77
  LocationY=-30
  Layer=1
  Angle=0
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

Disable GroupWorkflow Arduino_MatrixRig
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry
    -> BehaviorSubject PDandAsync
    -> MemberSelector(Selector=Item1)

Disable GroupWorkflow Logging_MatrixRig
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #3, #1 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_TrialParams) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject TrialParams => #9
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #11
        #9, #11 -> Zip => #12
        SubscribeSubject ArduinoTime => #13
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression:
            new(Item1.Item1.Id as Id,
            Item1.Item1.Duration as Duration,
            Item1.Item1.Size as Size,
            Item1.Item1.Colour1 as Colour1,
            Item1.Item1.Colour2 as Colour2,
            Item1.Item1.numDots1 as numDots1,
            Item1.Item1.numDots2 as numDots2,
            Item1.Item1.dotLifeBool as dotLifeBool,
            Item1.Item1.dotLifetime as dotLifetime,
            Item1.Item1.Contrast1 as Contrast1,
            Item1.Item1.Contrast2 as Contrast2,
            Item1.Item1.VelX1 as VelX1,
            Item1.Item1.VelX2 as VelX2,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        #6, #7, #8, #15 -> Bonsai.IO.CsvWriter
          FileName=M24019_DotMotion_SpeedTuning_TrialParams.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Id,Duration,Size,Colour1,Colour2,numDots1,numDots2,dotLifeBool,dotLifetime,Contrast1,Contrast2,VelX1,VelX2,Coherence1,BonsaiTime,ArduinoTime"
    #7, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #4
        #0, #1, #2, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject VideoLEDAsync => #3
        #0, #2, #3 -> Zip => #4
        SubscribeSubject ArduinoTime => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

GroupWorkflow Arduino
    ExternalizedMapping(PortName)
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM3
      BaudRate=1000000
      Encoding=utf-8
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoSerial, NewLine=\n)
    -> Disable SampleInterval(Interval=PT0.001S)
    -> Parse(Pattern=%i\t%i\t%i\t%i\t%f\t%i\t%i\t%i)
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> Disable MulticastSubject WheelInput
    -> BehaviorSubject WheelInput
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> Disable MulticastSubject LeftLick
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> Disable MulticastSubject RightLick
    -> BehaviorSubject RightLick
    #5 -> MemberSelector(Selector=Item4)
    -> Disable MulticastSubject LastSyncPulseTime
    -> BehaviorSubject LastSyncPulseTime
    #5 -> MemberSelector(Selector=Item5)
    -> Disable MulticastSubject Photodiode
    -> BehaviorSubject Photodiode
    #5 -> MemberSelector(Selector=Item6)
    -> DistinctUntilChanged
    -> Disable MulticastSubject TwoPFrameTime
    -> BehaviorSubject TwoPFrameTime
    #5 -> MemberSelector(Selector=Item7)
    -> DistinctUntilChanged
    -> Disable MulticastSubject WideFieldFrameTime
    -> BehaviorSubject WideFieldFrameTime
    #5 -> MemberSelector(Selector=Rest.Item1)
    -> Disable MulticastSubject ArduinoTime
    -> BehaviorSubject ArduinoTime

    Disable Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoPD
      PortName=COM7
      BaudRate=250000
      Encoding=us-ascii
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoPD, NewLine=\n)
    -> Disable Parse(Pattern="%i,%i")
    -> Disable Retry
    -> Disable BehaviorSubject PDandAsync
    -> Disable MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250421\M25041_DotMotion_SpeedTuning_20250421_00001_Wheel.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow TwoPLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TwoPLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250421\M25041_DotMotion_SpeedTuning_20250421_00001_2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #3 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250421\M25041_DotMotion_SpeedTuning_20250421_00001_Photodiode.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_TrialParams) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject TrialParams => #9
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #11
        #9, #11 -> Zip => #12
        SubscribeSubject ArduinoTime => #13
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression:
            new(Item1.Item1.Id as Id,
            Item1.Item1.Duration as Duration,
            Item1.Item1.Size as Size,
            Item1.Item1.Colour1 as Colour1,
            Item1.Item1.Colour2 as Colour2,
            Item1.Item1.numDots1 as numDots1,
            Item1.Item1.numDots2 as numDots2,
            Item1.Item1.dotLifeBool as dotLifeBool,
            Item1.Item1.dotLifetime as dotLifetime,
            Item1.Item1.Contrast1 as Contrast1,
            Item1.Item1.Contrast2 as Contrast2,
            Item1.Item1.VelX1 as VelX1,
            Item1.Item1.VelX2 as VelX2,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        #6, #7, #8, #15 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250421\M25041_DotMotion_SpeedTuning_20250421_00001_TrialParams.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #7, #1 -> SubscribeWhen
    GroupWorkflow QuadLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #9
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Quad) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject QuadLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250421\M25041_DotMotion_SpeedTuning_20250421_00001_Quad.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #1, #9 -> SubscribeWhen

    Disable GroupWorkflow S(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #5
        #0, #1, #2, #5 -> Zip => #6
        SubscribeSubject RenderFrameCount => #7
        #6, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    Disable GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject VideoLEDAsync => #3
        #0, #2, #3 -> Zip => #4
        SubscribeSubject ArduinoTime => #5
        #4, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject Photodiode => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #5
        #0, #1, #2, #5 -> Zip => #6
        SubscribeSubject RenderFrameCount => #7
        #6, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as PDOutput, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

    Disable GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Video) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        SubscribeSubject VideoLog => #9
        #6, #7, #8, #9 -> Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")

    GroupWorkflow TwoPLogging
        SubscribeSubject TwoPFrameTime => #0
        Disable SubscribeSubject LastSyncPulseTime => #1
        Disable SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #5
        #0, #1, #2, #5 -> Zip => #6
        SubscribeSubject RenderFrameCount => #7
        SubscribeSubject LastSyncPulseTime => #8
        SubscribeSubject ArduinoTime => #9
        #8, #9 -> Zip => #10
        #7, #10 -> CombineLatest => #11
        #6, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as TwoPFrameTime,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject TwoPLog
        -> WorkflowOutput

    Disable GroupWorkflow PhotodiodeLogging
        Disable SubscribeSubject PDandAsync => #0
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Disable Zip => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

    GroupWorkflow QuadLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject QuadState => #14
        Disable SubscribeSubject LastSyncPulseTime => #15
        Disable SubscribeSubject ArduinoTime => #16
        #14 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
        #14, #15, #16, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as QuadState, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject QuadLog
        -> Disable WorkflowOutput

        SubscribeSubject QuadState => #26
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #29
        #26, #29 -> Zip => #30
        SubscribeSubject RenderFrameCount => #31
        SubscribeSubject LastSyncPulseTime => #32
        SubscribeSubject ArduinoTime => #33
        #32, #33 -> Zip => #34
        #31, #34 -> CombineLatest => #35
        #30, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject QuadLog
        -> WorkflowOutput

Disable GroupWorkflow Video => #40
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=1952, Y=63, Width=59, Height=70))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_video.avi, Selector=it)
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=M24019_DotMotion_SpeedTuning_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #18
    #17, #18 -> SubscribeWhen => #19
    #19, #16 -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Disable Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #41
#40, #41 -> Disable SubscribeWhen

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DotMotion_SpeedTuning_20250422_00001) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=C:\DATA\Subjects\M25041\Bonsai\20250422\M25041) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName
