WorkflowBuilder(Version=2.8.2)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=0
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

GroupWorkflow "InitialGray Screen" => #2
    SubscribeSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=5, ExtentY=5, LocationX=80, LocationY=-30, Layer=1, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=1)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #3
#2, #3 -> TakeUntil => #4
ExternalizedMapping(ActiveQuads, GridSize, Duration, Value(DisplayName=BinFileName, Category=Filename))
-> GroupWorkflow "SparseNoise Group" => #6
    ExternalizedMapping(Duration, ActiveQuads, GridSize)
    -> IncludeWorkflow(Path=BonVision:Collections.SparseNoise.bonsai, Duration=PT1.1S, ActiveQuads=100, GridSize(Width=6, Height=4)) => #1
    SubscribeSubject FilenamePrefix => #2
    ExternalizedMapping(Value)
    -> StringProperty(Value=_Log.bin) => #4
    #2, #4 -> Zip
    -> Format(Format={0}{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #7
    #1, #7 -> Bonsai.Dsp.MatrixWriter(Path=C:\DATA\Subjects\PiezoTest\Bonsai\20250328\M25041_SparseNoise_20250328_00001_Log.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    -> Sink TriggerSyncQuad
        WorkflowInput Source1
        -> ElementIndex
        -> MemberSelector(Selector=Index) => #2
        -> Add(Operand=IntProperty(Value=1))
        -> Mod(Operand=IntProperty(Value=2))
        -> MulticastSubject QuadState
        -> WorkflowOutput
        #2 -> MulticastSubject RepCounter
    -> Bonsai.Shaders.UpdateTexture(TextureName=DynamicVideo, TextureTarget=Texture2D, InternalFormat=Rgba)
    -> FloatProperty(Value=0)
    -> WorkflowOutput
    #1 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #14
    #14, #1 -> Zip
    -> Disable IncludeWorkflow TrialEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
#4, #6 -> Concat => #7
ExternalizedMapping("Stim Duration (s)")
-> GroupWorkflow Timer
    SubscribeSubject RepCounter => #0
    SubscribeSubject DurationSingleImage => #1
    #0, #1 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform => #3
      Expression: item1*item2
    ExternalizedMapping(Value(DisplayName="Stim Duration (s)"))
    -> FloatProperty(Value=600)
    -> PropertyMapping(Value) => #6
    #3, #6 -> Equal(Operand=FloatProperty(Value=600))
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> WorkflowOutput
-> MulticastSubject TimerExpired => #11
#7, #11 -> TakeUntil => #12
GroupWorkflow FinalGrayScreen => #13
    SubscribeSubject DrawStimuli
    -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=5
      ExtentY=5
      LocationX=-80
      LocationY=-30
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
    -> FloatProperty(Value=0)
    -> WorkflowOutput

    Disable Bonsai.Shaders.UpdateFrame
#12, #13 -> Concat
-> WorkflowOutput
ExternalizedMapping(ExtentX, ExtentY, LocationX, LocationY) => #16
SubscribeSubject DrawStimuli => #17
#16, #17 -> IncludeWorkflow => #18
  Path=BonVision:Primitives.DrawImage.bonsai
  TextureName=DynamicVideo
  ExtentX=110
  ExtentY=70
  LocationX=-26.5
  LocationY=0
  Layer=0
  Angle=0
  ScaleX=1
  ScaleY=1
  ShiftX=0
  ShiftY=0
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #19
#18, #19 -> SubscribeWhen => #20
#20, #11 -> TakeUntil

Disable BehaviorSubject StartDisplay

Bonsai.Shaders.RenderFrame => #23
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #25
#23, #25 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
-> PublishSubject DrawStimuli
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #28
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\LUT_NoRed_SALEEM20.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#28 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\LUT_NoRed_SALEEM20.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#28 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.0000016696521, Z=0), Translation(X=12, Y=0, Z=-9))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\LUT_NoRed_SALEEM20.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.665, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
#23 -> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount
#23 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

ExternalizedMapping(TopBorder(Category=OrthBorder), BottomBorder(Category=OrthBorder), LeftBorder(Category=OrthBorder), RightBorder(Category=OrthBorder))
-> GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow VarInIt
    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

SubscribeSubject DrawStimuli => #48
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #50
#48, #50 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=15
  ExtentY=10
  LocationX=80
  LocationY=-30
  Layer=1
  Angle=0
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

Bonsai.Shaders.UpdateFrame
-> PublishSubject DrawQuad

GroupWorkflow Arduino
    ExternalizedMapping(PortName)
    -> Bonsai.IO.Ports.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM3
      BaudRate=1000000
      Encoding=utf-8
      NewLine=\r\n
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoSerial, NewLine=\n)
    -> Disable SampleInterval(Interval=PT0.05S)
    -> Parse(Pattern=%i\t%i\t%i\t%i\t%f\t%i\t%i\t%i)
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #5 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #5 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #5 -> MemberSelector(Selector=Item6)
    -> DistinctUntilChanged
    -> BehaviorSubject TwoPFrameTime
    #5 -> MemberSelector(Selector=Item7)
    -> DistinctUntilChanged
    -> BehaviorSubject WideFieldFrameTime
    #5 -> MemberSelector(Selector=Rest.Item1)
    -> BehaviorSubject ArduinoTime

    GroupWorkflow PiezoArduino
        ExternalizedMapping(PortName)
        -> Bonsai.IO.Ports.CreateSerialPort
          Name=ArduinoPiezo
          PortName=COM5
          BaudRate=1000000
          Encoding=utf-8
          NewLine=\r\n
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoPiezo, NewLine=\n)
        -> Parse(Pattern=%i\t%i\t%i)
        -> Retry => #4
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject Piezo
        #4 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject AsyncPulseTime_Piezo
        #4 -> MemberSelector(Selector=Item3)
        -> BehaviorSubject ArduinoTime_Piezo

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Wheel) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250328\M25041_SparseNoise_20250328_00001_Wheel.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow TwoPLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject TwoPLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\PiezoTest\Bonsai\20250328\M25041_SparseNoise_20250328_00001_2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #1, #3 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Photodiode) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\M25041\Bonsai\20250328\M25041_SparseNoise_20250328_00001_Photodiode.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    GroupWorkflow QuadLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject FilenamePrefix => #0
        StringProperty(Value=_Quad) => #1
        #0, #1 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #6
        ExternalizedMapping(Overwrite) => #7
        ExternalizedMapping(Suffix) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject QuadLog => #10
        #6, #7, #8, #10 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\PiezoTest\Bonsai\20250328\M25041_SparseNoise_20250328_00001_Quad.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        Disable SubscribeSubject FilenamePrefix => #12
        Disable StringProperty(Value=_Photodiode) => #13
        #12, #13 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Disable Take(Count=1)
        -> Disable Format(Format={0}.csv)
        -> Disable PropertyMapping(FileName) => #18
        Disable ExternalizedMapping(Overwrite) => #19
        Disable ExternalizedMapping(Suffix) => #20
        Disable ExternalizedMapping(Name)
        -> Disable SubscribeSubject PDLog => #22
        #18, #19, #20, #22 -> Disable Bonsai.IO.CsvWriter(FileName=M24019_DotMotion_SpeedTuning_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #1, #7 -> SubscribeWhen
    GroupWorkflow PiezoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #9
        SubscribeSubject FilenamePrefix => #0
        ExternalizedMapping(Value(DisplayName=FileEnding))
        -> StringProperty(Value=_2P) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #7
        ExternalizedMapping(Overwrite) => #8
        ExternalizedMapping(Suffix) => #9
        ExternalizedMapping(Name)
        -> SubscribeSubject PiezoLog => #11
        #7, #8, #9, #11 -> Bonsai.IO.CsvWriter
          FileName=C:\DATA\Subjects\PiezoTest\Bonsai\20250403\PiezoTest_PiezoTestNoStim_2P.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #9, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        SubscribeSubject LastSyncPulseTime => #1
        SubscribeSubject ArduinoTime => #2
        #0 -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #4
        #0, #1, #2, #4 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as Photodiode,
            Item1.Item1.Item1.Item2 as QuadState,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        SubscribeSubject Photodiode => #15
        SubscribeSubject LastSyncPulseTime => #16
        SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #20
        #15, #16, #17, #20 -> Zip => #21
        SubscribeSubject RenderFrameCount => #22
        #21, #22 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as PDOutput, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow TwoPLogging
        Disable SubscribeSubject TwoPFrameTime => #0
        Disable SubscribeSubject WideFieldFrameTime => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #3, #4 -> Disable Zip => #5
        #2, #5 -> Disable WithLatestFrom => #6
        Disable SubscribeSubject RenderFrameCount => #7
        #6, #7 -> Disable WithLatestFrom => #8
        #6 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #10
        #8, #10 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1.item1 as TwoPFrame,
            Item1.Item1.Item1.Item2 as WideFieldFrameTime,
            Item1.Item1.Item2.Item1 as LastSyncPulseTime,
            Item1.Item1.Item2.Item2 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject TwoPLog
        -> Disable WorkflowOutput

        SubscribeSubject TwoPFrameTime => #15
        Disable SubscribeSubject LastSyncPulseTime => #16
        Disable SubscribeSubject ArduinoTime => #17
        #15 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
        #15, #16, #17, #19 -> Zip => #20
        SubscribeSubject RenderFrameCount => #21
        SubscribeSubject LastSyncPulseTime => #22
        SubscribeSubject ArduinoTime => #23
        #22, #23 -> Zip => #24
        #21, #24 -> CombineLatest => #25
        #20, #25 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as TwoPFrameTime,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject TwoPLog
        -> WorkflowOutput

        Disable SubscribeSubject ArduinoTime => #30
        Disable SubscribeSubject LastSyncPulseTime => #31
        Disable SubscribeSubject TwoPFrameTime => #32
        #30, #31, #32 -> Disable Zip => #33
        -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #35
        #33, #35 -> Disable Zip => #36
        Disable SubscribeSubject RenderFrameCount => #37
        #36, #37 -> Disable WithLatestFrom

    GroupWorkflow QuadLogging
        Disable SubscribeSubject Photodiode => #0
        Disable SubscribeSubject QuadState => #1
        #0, #1 -> Disable CombineLatest => #2
        Disable SubscribeSubject LastSyncPulseTime => #3
        Disable SubscribeSubject ArduinoTime => #4
        #2, #3, #4 -> Disable Zip => #5
        Disable SubscribeSubject RenderFrameCount => #6
        #5, #6 -> Disable WithLatestFrom => #7
        #5 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #9
        #7, #9 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.item1.item1 as PDoutput,
            Item1.Item1.item1.item2 as QuadState,
            Item1.Item1.item2 as LastSyncPulseTime,
            Item1.Item1.item3 as ArduinoTime,
            Item1.Item2 as RenderFrameCount,
            Item2 as BonsaiTime)
        -> Disable BehaviorSubject PDLog
        -> Disable WorkflowOutput

        Disable SubscribeSubject QuadState => #14
        Disable SubscribeSubject LastSyncPulseTime => #15
        Disable SubscribeSubject ArduinoTime => #16
        #14 -> Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
        #14, #15, #16, #19 -> Disable Zip => #20
        Disable SubscribeSubject RenderFrameCount => #21
        #20, #21 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as QuadState, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> Disable BehaviorSubject QuadLog
        -> Disable WorkflowOutput

        SubscribeSubject QuadState => #26
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #29
        #26, #29 -> Zip => #30
        SubscribeSubject RenderFrameCount => #31
        SubscribeSubject LastSyncPulseTime => #32
        SubscribeSubject ArduinoTime => #33
        #32, #33 -> Zip => #34
        #31, #34 -> CombineLatest => #35
        #30, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1 as QuadState,
            Item1.Item2 as BonsaiTime,
            Item2.Item1 as RenderFrameCount,
            Item2.Item2.Item1 as LastSyncPulseTime,
            Item2.Item2.Item2 as ArduinoTime)
        -> BehaviorSubject QuadLog
        -> WorkflowOutput

    GroupWorkflow PiezoLogging
        SubscribeSubject Piezo => #0
        SubscribeSubject AsyncPulseTime_Piezo => #1
        SubscribeSubject ArduinoTime_Piezo => #2
        #0, #1, #2 -> Zip => #3
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #5
        #3, #5 -> Zip => #6
        SubscribeSubject RenderFrameCount => #7
        #6, #7 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(Item1.Item1.Item1 as Piezo,
            Item1.Item1.Item2 as LastSyncPulsetime,
            Item1.Item1.Item3 as ArduinoTime,
            Item1.Item2 as BonsaiTime,
            Item2 as RenderFrameCount)
        -> BehaviorSubject PiezoLog
        -> WorkflowOutput

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=SparseNoise_20250328_00001) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=C:\DATA\Subjects\PiezoTest\Bonsai\20250328\M25041) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName
