WorkflowBuilder(Version=2.8.2)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=Triangles
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\Triangles.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=dots
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\8914_generated.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern 3"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern 3.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="triangle pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\triangle pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="star pattern 4"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\star pattern 4.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=45Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\45Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=135Grat_12
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\135Grat_12.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white cross"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white cross.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white plus"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white plus.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="black bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\black bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="white bar"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\white bar.jpg"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="square white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\square white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white R"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white R.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot white L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot white L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot black L"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot black L.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid_45_6
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid_45_6.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern black 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern black 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name="dot pattern white 1"
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName="Textures\dot pattern white 1.png"
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid_50perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat_50
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat_50perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn1_25perC
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn1_25perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn2_25perC
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn2_25perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn3_25perC
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn3_25perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=smoothed_fwn4_25perC
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\smoothed_fwn4_25perC.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=Textures\cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #8
-> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=20, Light(X=0, Y=0, Z=0))
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    ViewMatrix as ViewMatrix,
    ProjectionMatrix as ProjectionMatrix,
    ViewMatrix.Row3.Yzw as Light)
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=#404040, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #13
#8 -> PublishSubject DrawStimuli => #14
#13, #14 -> Sample
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=24, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
-> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
    WorkflowInput Source1
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
    ExternalizedMapping(Path)
    -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
    -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> Bonsai.Shaders.LatestOnUpdateFrame
    -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
    #1, #7 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
    -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
    -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
    -> WorkflowOutput

    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

    Disable ExternalizedMapping(Path)
    -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
    -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
    -> Disable Bonsai.Vision.ConvertToImage
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
#8 -> Bonsai.Shaders.SampleOnUpdateFrame
-> PublishSubject draw

ExternalizedMapping(SkipRows)
-> Bonsai.IO.CsvReader(FileName=START_LOCATION_2PRig_v1.CSV, ListSeparator=",", SkipRows=0)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(double.Parse(it[0]) as item1,
    double.Parse(it[1]) as item2,
    double.Parse(it[2]) as item3,
    double.Parse(it[3]) as item4,
    double.Parse(it[4]) as item5,
    double.Parse(it[5]) as item6,
    double.Parse(it[6]) as item7,
    double.Parse(it[7]) as item8
    )
-> CreateObservable Trial
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Startpos
    #0 -> MemberSelector(Selector=item2)
    -> BehaviorSubject "Reward Zone Centre Location"
    #0 -> MemberSelector(Selector=item3)
    -> BehaviorSubject "Reward Zone Size"
    #0 -> MemberSelector(Selector=item4)
    -> BehaviorSubject "Track ID"
    #0 -> MemberSelector(Selector=item5)
    -> BehaviorSubject "Lap ID"
    #0 -> MemberSelector(Selector=item6)
    -> BehaviorSubject "Lick Limit"
    #0 -> MemberSelector(Selector=item7)
    -> BehaviorSubject "Learning Type"
    #0 -> MemberSelector(Selector=item8)
    -> BehaviorSubject "GreyScreen Duration"

    GroupWorkflow "Track Trial" => #17
        Bonsai.Shaders.Input.MouseCursor
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #3
        ExternalizedMapping(Value(DisplayName=Gain)) => #4
        #3, #4 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #7
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #9
        #7, #9 -> Add(Operand=DoubleProperty(Value=-1140))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> BehaviorSubject MousePos
        -> TakeWhile => #13
            WorkflowInput Source1 => #0
            SubscribeSubject Startpos
            -> Add(Operand=DoubleProperty(Value=120))
            -> PropertyMapping(Value) => #3
            #0, #3 -> LessThan(Operand=FloatProperty(Value=-1020))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> Condition => #15
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #13, #15 -> SkipUntil
        -> Unit => #17
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=30000000, Upper=60000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT4.3992798S, Period=PT0S)
        -> Disable Unit => #23
        #17, #23 -> Disable Concat
        -> Last => #25
        Disable ExternalizedMapping(Count) => #26
        #25, #26 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput

        Disable GroupWorkflow "Black quad" => #29
            FloatProperty(Value=0)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
            SubscribeSubject draw => #2
            #1, #2 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            -> WorkflowOutput
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT2.7711713S, Period=PT0S)
        -> Disable Unit => #35
        #29, #35 -> Disable TakeUntil => #36
        Disable GroupWorkflow "White quad" => #37
            FloatProperty(Value=1)
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
            SubscribeSubject draw => #2
            #1, #2 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=0.05
              ExtentY=0.05
              LocationX=0.32
              LocationY=0.22
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            -> WorkflowOutput
        Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20000000, Upper=40000000)
        -> Disable Bonsai.Numerics.Permutation
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(DueTime)
        -> Disable Timer(DueTime=PT2.1257678S, Period=PT0S)
        -> Disable Unit => #43
        #37, #43 -> Disable TakeUntil => #44
        #36, #44 -> Disable Concat
        -> Disable Repeat

        GroupWorkflow "Check No Early Licks"
            SubscribeSubject RightLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #4
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            SubscribeSubject LeftLick
            -> Skip(Count=1)
            -> IntProperty(Value=1)
            -> Accumulate
            -> Condition "Exceed lick limit" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject "Lick Limit"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=10))
                -> WorkflowOutput
            #4, #9 -> Amb
            -> BooleanProperty(Value=true)
            -> First
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> BehaviorSubject AbortTrial
            -> WorkflowOutput

            Disable SubscribeSubject LeftLick => #17
            Disable SubscribeSubject "Lick Limit"
            -> Disable PropertyMapping(Count) => #19
            #17, #19 -> Disable Skip(Count=4) => #20
            Disable SubscribeSubject RightLick => #21
            #21, #19 -> Disable Skip(Count=4) => #22
            #20, #22 -> Disable Amb
            -> Disable BooleanProperty(Value=true)
            -> Disable First
            -> Disable Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable Unit
            -> Disable BehaviorSubject AbortTrial
            -> Disable WorkflowOutput
    GroupWorkflow "GreyScreen Trial" => #18
        Bonsai.Shaders.Input.MouseCursor
        -> MemberSelector(Selector=WheelPrecise)
        -> Bonsai.Dsp.Difference(Order=1) => #2
        ExternalizedMapping(Value(DisplayName=Gain)) => #3
        #2, #3 -> Multiply(Operand=DoubleProperty(Value=3))
        -> Accumulate
        -> Condition => #6
            WorkflowInput Source1
            -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Startpos
        -> PropertyMapping(Value) => #8
        #6, #8 -> Add(Operand=DoubleProperty(Value=-1140)) => #9
        Timer(DueTime=PT10S, Period=PT0S) => #10
        #9, #10 -> TakeUntil => #11
        SubscribeSubject Startpos
        -> Condition => #13
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=200))
            -> WorkflowOutput
        #11, #13 -> SkipUntil
        -> Disable SubscribeWhen
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: single(it)
        -> Unit
        -> Last => #18
        Disable ExternalizedMapping(Count) => #19
        #18, #19 -> Disable RepeatCount(Count=3)
        -> WorkflowOutput
    #17, #18 -> Amb => #19
    SubscribeSubject AbortTrial => #20
    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Take(Count=1) => #23
    #20, #23 -> TakeUntil => #24
    #19, #24 -> Merge
    -> First => #26
    Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=40000000, Upper=70000000)
    -> Bonsai.Numerics.Permutation
    -> Bonsai.Numerics.Distributions.Sample
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5.1920816S, Period=PT0S)
    -> Unit => #32
    #26, #32 -> Concat
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> Skip(Count=1)
    -> IntProperty(Value=1)
    -> MulticastSubject "End of lap"
    -> WorkflowOutput

    GroupWorkflow "Track Textures"
        Disable GroupWorkflow blocker
            SubscribeSubject Draw3DStim => #0
            SubscribeSubject "Blocker X"
            -> PropertyMapping(TranslationX) => #2
            SubscribeSubject "Blocker Rotation X"
            -> PropertyMapping(RotationX) => #4
            SubscribeSubject "Blocker Rotation Y"
            -> PropertyMapping(RotationY) => #6
            #0, #2, #4, #6 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=-5
              TranslationY=1
              TranslationZ=-1
              RotationZ=0
              RotationY=180
              RotationX=180
              ScaleX=10
              ScaleY=10
              ScaleZ=8
              Ambient(X=0.25, Y=0.25, Z=0.25)
              Diffuse(X=0.3, Y=0.3, Z=0.3)
              Specular(X=0.3, Y=0.3, Z=0.3)
              SpecularExponent=1
              MeshName=Plane
            -> WorkflowOutput

        Disable GroupWorkflow "Track 1 Textures"
            GroupWorkflow "Track 1 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+60
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=20.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=20.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=20.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=20.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+30
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY, Diffuse) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=-9.850525
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=-9.850525
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-9.850525
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-9.850525
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+50
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=10.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=10.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=10.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=10.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+70
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=30.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=30.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=30.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=30.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+90
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=50.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=50.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=50.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=50.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 1 Texture5"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=70.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=70.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=70.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=70.1494751
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

        Disable GroupWorkflow "Track 2 Textures"
            GroupWorkflow "Track 2 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1060
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=1020.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=1020.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=1020.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=1020.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=990.1495
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=990.1495
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=990.1495
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=990.1495
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=1010.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=1010.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=1010.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=1010.14948
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=1030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=1030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=1030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=1030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=1050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=1050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=1050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=1050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=1070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=1070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=1070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=1070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

        Disable GroupWorkflow "Track 5 Aman original Track"
            GroupWorkflow "Track 3 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+4060
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=3940
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=3940
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=3940
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=3940
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+4030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3910
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.88
                      TranslationY=2
                      TranslationZ=3910
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3910
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3910
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+4050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3930
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.977
                      TranslationY=2
                      TranslationZ=3930
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3930
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3930
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+4070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3950
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=3950
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3950
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3950
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+4090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3970
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.97
                      TranslationY=2
                      TranslationZ=3970
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3970
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.88
                      TranslationY=2
                      TranslationZ=3970
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

        Disable GroupWorkflow "Track 4 pillar"
            GroupWorkflow "Track 4 Main Room"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=2930
                      ScaleX=100
                      ScaleY=16
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=2930
                      ScaleX=100
                      ScaleY=16
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=2930
                      ScaleX=100
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=2930
                      ScaleX=100
                      ScaleY=8
                      ScaleZ=0
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 4 pillar 1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3100
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=2
                      TranslationZ=2960
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                #6, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=2960
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3100.5
                -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Front
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2960.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3099.5
                -> PropertyMapping(TranslationZ) => #14
                #14, #4 -> GroupWorkflow Back
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2959.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput

            GroupWorkflow "Track 4 pillar 2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3080
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=2
                      TranslationZ=2940
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                #6, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=2940
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3080.5
                -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Front
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2940.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3079.5
                -> PropertyMapping(TranslationZ) => #14
                #14, #4 -> GroupWorkflow Back
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2939.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput

            GroupWorkflow "Track 4 pillar 3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3060
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=2
                      TranslationZ=2920
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                #6, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=2920
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3060.5
                -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Front
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2920.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3059.5
                -> PropertyMapping(TranslationZ) => #14
                #14, #4 -> GroupWorkflow Back
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2919.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput

            GroupWorkflow "Track 1 pillar 4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3040
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=5
                      TranslationY=2
                      TranslationZ=2900
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                #6, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=2900
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3040.5
                -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Front
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2900.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput
                ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it+3039.5
                -> PropertyMapping(TranslationZ) => #14
                #14, #4 -> GroupWorkflow Back
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4.5
                      TranslationY=2
                      TranslationZ=2899.5
                      ScaleX=1
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=180
                      RotationX=180
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture1"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3040
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2900
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2900
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=7.98
                      TranslationY=2
                      TranslationZ=2900
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-7.98
                      TranslationY=2
                      TranslationZ=2900
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture2"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3060
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2920
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2920
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=7.98
                      TranslationY=2
                      TranslationZ=2920
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-7.98
                      TranslationY=2
                      TranslationZ=2920
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture3"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3080
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2940
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2940
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=7.98
                      TranslationY=2
                      TranslationZ=2940
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-7.98
                      TranslationY=2
                      TranslationZ=2940
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture4"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3100
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2960
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2960
                      ScaleX=8
                      ScaleY=16
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=7.98
                      TranslationY=2
                      TranslationZ=2960
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-7.98
                      TranslationY=2
                      TranslationZ=2960
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      MeshName=Plane
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    -> WorkflowOutput

        Disable GroupWorkflow "Track 3 Textures"
            GroupWorkflow "Track 3 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2060
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=2020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=2020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=2020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=2020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=1990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=1990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=1990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=1990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=2010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=2010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=-1.98
                      TranslationZ=2030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=2030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=2
                      TranslationY=5.98
                      TranslationZ=2030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=2030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=2050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=2050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 3 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+2110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=2070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=2070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=2070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=1, Y=1, Z=1)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=2070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

        Disable GroupWorkflow "Track 4 Textures"
            GroupWorkflow "Track 4 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3060
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=3020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=3020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=120
                      ScaleY=16
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=8
                      TranslationY=2
                      TranslationZ=3020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-8
                      TranslationY=2
                      TranslationZ=3020.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=120
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=2990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=2990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=2990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=2990.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=3010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=3010.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=-1.98
                      TranslationZ=3030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=3030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-2
                      TranslationY=5.98
                      TranslationZ=3030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=4
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=3030.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=3050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=3050.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 4 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+3110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=3070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=3070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=3070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=3070.14941
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

        Disable GroupWorkflow Backup
            Disable GroupWorkflow "Track 1 Textures"
                GroupWorkflow "Track 1 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+60
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=-60
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+30
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-90
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+50
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-70
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+70
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-50
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+90
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-30
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 1 Texture5"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black R", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot black", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=-10
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=0, Y=0, Z=0)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Textures"
                GroupWorkflow "Track 2 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white plus", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 2 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+1110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white L", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                    #8, #9 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #11
                    #11, #9 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="dot white", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 5 Aman original Track"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-4
                          TranslationY=2
                          TranslationZ=3940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.977
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+4090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.97
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.88
                          TranslationY=2
                          TranslationZ=3970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 pillar"
                GroupWorkflow "Track 4 Main Room"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=4smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=100
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3100.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2960.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3099.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2959.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3080.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2940.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3079.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2939.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 pillar 3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3060.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2920.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3059.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2919.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 1 pillar 4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression(DisplayName="Z location")) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=5
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #6
                    #6, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Front Z")) => #8
                    #0, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3040.5
                    -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Front
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2900.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput
                    ExternalizedMapping(Expression(DisplayName="Back Z")) => #12
                    #12, #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it+3039.5
                    -> PropertyMapping(TranslationZ) => #14
                    #14, #4 -> GroupWorkflow Back
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=4.5
                          TranslationY=2
                          TranslationZ=2899.5
                          ScaleX=1
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=180
                          RotationX=180
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3040
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2900
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2920
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3080
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="star pattern 4", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3100
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=16
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it)) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-7.98
                          TranslationY=2
                          TranslationZ=2960
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 3 Textures"
                GroupWorkflow "Track 3 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=1940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=-1.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=2
                          TranslationY=5.98
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 3 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+2110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=1990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

            Disable GroupWorkflow "Track 4 Textures"
                GroupWorkflow "Track 4 MainRoom"
                    SubscribeSubject MousePos => #0
                    ExternalizedMapping(Expression) => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3060
                    -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.99
                          TranslationZ=2940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.99
                          TranslationZ=2940
                          ScaleX=120
                          ScaleY=16
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ)
                    -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=8
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ(Selector=it))
                    -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-8
                          TranslationY=2
                          TranslationZ=2940
                          ScaleX=120
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture1"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3030
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=2910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=2910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=2910
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=2910
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture2"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3050
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=2930
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture3"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3070
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=-1.98
                          TranslationZ=2950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=2950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-2
                          TranslationY=5.98
                          TranslationZ=2950
                          ScaleX=8
                          ScaleY=4
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white cross", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=2950
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture4"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3090
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=2970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid, TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=2970
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

                GroupWorkflow "Track 4 Texture5"
                    ExternalizedMapping(Expression) => #0
                    SubscribeSubject MousePos => #1
                    #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: it+3110
                    -> PropertyMapping(TranslationZ) => #3
                    ExternalizedMapping(TextureName) => #4
                    #3, #4 -> GroupWorkflow Floor
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=-1.98
                          TranslationZ=2990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #6
                    #6, #4 -> GroupWorkflow Right
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=3.98
                          TranslationY=2
                          TranslationZ=2990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=8
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #8
                    #8, #4 -> GroupWorkflow Ceil
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=0
                          TranslationY=5.98
                          TranslationZ=2990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=-90
                        -> WorkflowOutput
                    #2 -> PropertyMapping(TranslationZ) => #10
                    #10, #4 -> GroupWorkflow Left
                        SubscribeSubject Draw3DStim => #0
                        ExternalizedMapping(TextureName) => #1
                        #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="white bar", TextureTarget=Texture2D) => #2
                        ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                        #2, #3 -> IncludeWorkflow
                          Path=BonVision:Primitives.DrawTexturedModel.bonsai
                          TranslationX=-3.98
                          TranslationY=2
                          TranslationZ=2990
                          ScaleX=8
                          ScaleY=8
                          ScaleZ=0
                          MeshName=Plane
                          Ambient(X=0.5, Y=0.5, Z=0.5)
                          Diffuse(X=1, Y=1, Z=1)
                          Specular(X=1, Y=1, Z=1)
                          SpecularExponent=10
                          RotationZ=0
                          RotationY=90
                          RotationX=0
                        -> WorkflowOutput

        GroupWorkflow "Track 2 Textures" => #8
            GroupWorkflow "Track 2 MainRoom"
                SubscribeSubject MousePos => #0
                ExternalizedMapping(Expression) => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn2_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.99
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn4_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.99
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ)
                -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn1_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=4
                      TranslationY=2
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ(Selector=it))
                -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=smoothed_fwn3_25perC, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-4
                      TranslationY=2
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=140
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture1"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1030
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-14
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-14
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-14
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-14
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture2"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1050
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=6
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=6
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=6
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=6
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture3"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1070
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=plaid_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=26
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            GroupWorkflow "Track 2 Texture4"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1090
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName) => #4
                #3, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=46
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=46
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                #8, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=46
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #10
                #10, #4 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName=vertGrat_50, TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=46
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput

            Disable GroupWorkflow "Track 2 Texture5"
                ExternalizedMapping(Expression) => #0
                SubscribeSubject MousePos => #1
                #0, #1 -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it+1110
                -> PropertyMapping(TranslationZ) => #3
                ExternalizedMapping(TextureName(DisplayName="Floor + Ceil")) => #4
                #3, #4 -> GroupWorkflow Ceil
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=5.98
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #6
                #6, #4 -> GroupWorkflow Floor
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=0
                      TranslationY=-1.98
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=-90
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #8
                ExternalizedMapping(TextureName(DisplayName=Side)) => #9
                #8, #9 -> GroupWorkflow Right
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=3.98
                      TranslationY=2
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=8
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
                #2 -> PropertyMapping(TranslationZ) => #11
                #11, #9 -> GroupWorkflow Left
                    SubscribeSubject Draw3DStim => #0
                    ExternalizedMapping(TextureName) => #1
                    #0, #1 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="black cross", TextureTarget=Texture2D) => #2
                    ExternalizedMapping(TranslationZ, TranslationX, TranslationY, RotationZ, RotationY, RotationX, ScaleX, ScaleY) => #3
                    #2, #3 -> IncludeWorkflow
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-3.98
                      TranslationY=2
                      TranslationZ=-27.7932129
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                      ScaleX=8
                      ScaleY=8
                      ScaleZ=0
                      Ambient(X=0.5, Y=0.5, Z=0.5)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=1, Y=1, Z=1)
                      SpecularExponent=10
                      MeshName=Plane
                    -> WorkflowOutput
        SubscribeSubject Startpos => #9
        -> LessThan(Operand=DoubleProperty(Value=-1000)) => #10
        #9 -> GreaterThan(Operand=DoubleProperty(Value=-1200)) => #11
        #10, #11 -> Zip
        -> Condition => #13
            WorkflowInput Source1
            -> LogicalAnd
            -> WorkflowOutput
        #8, #13 -> SubscribeWhen

    GroupWorkflow "Performance Tracking"
        GroupWorkflow "Active Learning" => #0
            SubscribeSubject LickState
            -> PropertyMapping(Value) => #1
            Source2=#1 -> IntProperty(Value=2)
            -> Skip(Count=1) => #3
            GroupWorkflow "Reward zone info"
                SubscribeSubject InsideZone => #0
                -> Condition => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #3
                #1, #3 -> IntProperty(Value=1) => #4
                #0 -> Condition
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                #4, #6 -> Merge
                -> WorkflowOutput
            -> PropertyMapping(Value) => #5
            #3, #5 -> Equal(Operand=IntProperty(Value=0)) => #6
            -> Condition Correct => #7
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable Skip(Count=1)
            -> MulticastSubject LeftCorrect
            #7 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=2)
            -> Disable Skip(Count=1)
            -> MulticastSubject RightCorrect
            #6 -> Condition Incorrect => #18
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Condition "Incorrect Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable Skip(Count=1)
            -> MulticastSubject LeftIncorrect
            #18 -> IntProperty(Value=2)
            -> Condition "Incorrect Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable Skip(Count=1)
            -> MulticastSubject RightIncorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Active" => #2
            WorkflowInput Source1
            -> Equal(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        #0, #2 -> SubscribeWhen

        GroupWorkflow "Passive Learning" => #4
            SubscribeSubject Entry => #0
            -> IntProperty(Value=1)
            -> Condition "Correct Left"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable Skip(Count=1)
            -> MulticastSubject LeftCorrect
            #0 -> IntProperty(Value=2)
            -> Condition "Correct Right"
                WorkflowInput Source1 => #0
                SubscribeSubject "Track ID"
                -> PropertyMapping(Value) => #2
                #0, #2 -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Disable Skip(Count=1)
            -> MulticastSubject RightCorrect
        SubscribeSubject "Learning Type"
        -> Condition "If Passive" => #6
            WorkflowInput Source1
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen

        GroupWorkflow "Track Reward Zone"
            SubscribeSubject<System.Single> MousePos => #0
            SubscribeSubject "Reward Zone Centre Location" => #1
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1000) => #3
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #5
            #3, #5 -> Subtract(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #7
            #0, #7 -> GreaterThan(Operand=FloatProperty(Value=-1005)) => #8
            #1 -> PropertyMapping(Value)
            -> IntProperty(Value=-1000) => #10
            SubscribeSubject "Reward Zone Size"
            -> PropertyMapping(Value) => #12
            #10, #12 -> Add(Operand=IntProperty(Value=5))
            -> PropertyMapping(Value) => #14
            #14, #0 -> LessThan(Operand=FloatProperty(Value=-995)) => #15
            #8, #15 -> Zip
            -> LogicalAnd => #17
            -> BehaviorSubject InsideZone
            -> WorkflowOutput
            #17 -> Disable DistinctUntilChanged
            -> Disable Skip(Count=1) => #21
            -> Disable Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=1)
            -> Disable BehaviorSubject Entry
            #21 -> Disable BitwiseNot
            -> Disable Condition Exit
                WorkflowInput Source1
                -> WorkflowOutput
            -> Disable IntProperty(Value=0)
            -> Disable BehaviorSubject Exit
            SubscribeSubject "Reward Zone Centre Location"
            -> PropertyMapping(Value)
            -> IntProperty(Value=-1000)
            -> PropertyMapping(Value) => #32
            #0, #32 -> GreaterThan(Operand=FloatProperty(Value=-1000))
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Condition Entry
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> BehaviorSubject Entry

    GroupWorkflow "Control and Give Reward"
        GroupWorkflow "Generate Reward Serial String"
            FloatProperty(Value=200)
            -> BehaviorSubject RightValveOpenTime

            FloatProperty(Value=200)
            -> BehaviorSubject LeftValveOpenTime

            StringProperty(Value=l) => #4
            SubscribeSubject LeftValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=200)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
              Expression: it.ToString()
            #4, #8 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject LeftRewardString

            StringProperty(Value=r) => #12
            SubscribeSubject RightValveOpenTime
            -> PropertyMapping(Value)
            -> FloatProperty(Value=200)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
              Expression: it.ToString()
            #12, #16 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> BehaviorSubject RightRewardString

        SubscribeSubject LeftCorrect
        -> Disable Take(Count=1) => #2
        SubscribeSubject LeftRewardString
        -> PropertyMapping(Value) => #4
        #2, #4 -> StringProperty(Value=l200) => #5
        Disable SubscribeSubject "Learning Type" => #6
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #8
        #6 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #10
        #8, #10 -> Disable Amb
        -> Disable PropertyMapping(Count) => #12
        #5, #12 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        SubscribeSubject RightCorrect
        -> Disable Take(Count=1) => #17
        SubscribeSubject RightRewardString
        -> PropertyMapping(Value) => #19
        #17, #19 -> StringProperty(Value=r200) => #20
        Disable SubscribeSubject "Learning Type" => #21
        -> Disable Condition "If active + passive"
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #23
        #21 -> Disable Condition "If not both"
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=2))
            -> WorkflowOutput
        -> Disable IntProperty(Value=1) => #25
        #23, #25 -> Disable Amb
        -> Disable PropertyMapping(Count) => #27
        #20, #27 -> Skip(Count=1)
        -> Take(Count=1)
        -> MulticastSubject SerialToSend

        StringProperty
        -> BehaviorSubject SerialToSend

        SubscribeSubject SerialToSend
        -> Skip(Count=1)
        -> Take(Count=1)
        -> IntProperty(Value=1)
        -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r)

    GroupWorkflow "Get Licks"
        Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=true)
        -> Unit => #1
        Unit => #2
        #1, #2 -> Merge
        -> BehaviorSubject RightLick
        Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=true)
        -> Unit => #6
        #6, #2 -> Merge
        -> BehaviorSubject LeftLick

        GroupWorkflow "Check For Recent Licks"
            ExternalizedMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.05S)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #3
            IntProperty(Value=0) => #4
            SubscribeSubject LeftLick
            -> IntProperty(Value=1) => #6
            SubscribeSubject RightLick
            -> IntProperty(Value=2) => #8
            #4, #6, #8 -> Merge
            -> Skip(Count=3)
            -> BehaviorSubject LickState
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #13
            #3, #13 -> CombineLatest
            -> Subtract
            -> Divide(Operand=DoubleProperty(Value=1000))
            -> BehaviorSubject TimeSinceLastLick
-> Concat
-> Disable Last
-> Disable Repeat
-> Disable ElementIndex
-> Disable MemberSelector(Selector=Index)

Disable BehaviorSubject Startpos

Disable SelectMany Response
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2) => #1
    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=-1) => #4
    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> First
    -> FloatProperty(Value=1) => #7
    #4, #7 -> Amb => #8
    #1, #8 -> Zip
    -> Disable Bonsai.Scripting.IronPython.PythonTransform ComputeResult
      Script:
        @returns(int)
        def process(value):

          trialParam = value.Item1;
          trialResponse = value.Item2;

          if trialResponse == 0:
            output = 3; # no response

          elif trialParam > 0: # stim is right
            if trialResponse > 0:
              output = 2; #CORRECT RIGHT
            elif trialResponse < 0:
              output = 0; #wrong

          elif trialParam < 0: # stim is right
            if trialResponse < 0:
              output = 1; #correct left
            elif trialResponse > 0:
              output = 0; #wrong

          return output
    -> WorkflowOutput

Disable GroupWorkflow ArduinoSerial
    Bonsai.IO.SerialStringRead(PortName=COM6, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #2
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject lick => #4
    -> DistinctUntilChanged
    #2 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #7
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=-0.04)) => #9
    ExternalizedMapping(Value(DisplayName=Gain)) => #10
    #9, #10 -> Multiply(Operand=DoubleProperty(Value=1))
    -> Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> PublishSubject Displacement
    #2 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #15
    #15, #4, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Sync, Item2 as Lick, Item3 as Wheel)
    -> Bonsai.IO.CsvWriter
      FileName=D:\Data\Stefano\Arduino\SyncWheelSignal_.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector="Wheel,Sync,Lick"

Disable GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> BehaviorSubject MousePos

    FloatProperty(Value=0)
    -> BehaviorSubject SpherePos

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=120)
    -> BehaviorSubject SphereStartPos

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

Disable Bonsai.Vision.CameraCapture(Index=1, CaptureProperties="")
-> Disable BehaviorSubject Camera
-> Disable Timestamp
-> Disable MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
-> Disable First
-> Disable BehaviorSubject "First timestamp"

Disable GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject ScreenCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

Bonsai.Video.ScreenCaptureStream(HideCursor=true, CaptureRegion(X=0, Y=300, Width=1920, Height=480), FrameInterval=100)
-> Bonsai.Shaders.SampleOnRenderFrame
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Crop(RegionOfInterest(X=1895, Y=431, Width=17, Height=30))
-> Bonsai.Dsp.Average
-> MemberSelector(Selector=Val0)
-> LessThanOrEqual(Operand=DoubleProperty(Value=128))
-> BehaviorSubject Quadstate

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    BooleanProperty(Value=false)
    -> BehaviorSubject InsideZone

    IntProperty(Value=1)
    -> BehaviorSubject "Lap ID"

    Disable IntProperty(Value=1)
    -> Disable BehaviorSubject "Lick Limit"

    GroupWorkflow TrialOutcomes
        IntProperty(Value=0) => #0
        -> BehaviorSubject LeftCorrect
        #0 -> BehaviorSubject RightCorrect
        #0 -> BehaviorSubject NoResponse
        #0 -> BehaviorSubject LeftIncorrect
        #0 -> BehaviorSubject RightIncorrect

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    IntProperty(Value=1)
    -> BehaviorSubject "End of lap"

    IntProperty(Value=1)
    -> BehaviorSubject "Track ID"

GroupWorkflow "Performance Calculation"
    SubscribeSubject LeftCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate => #3
    SubscribeSubject RightCorrect
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> PropertyMapping(Value) => #8
    #3, #8 -> Add(Operand=IntProperty(Value=3))
    -> Divide(Operand=IntProperty(Value=0))
    -> WorkflowOutput

    SubscribeSubject "End of lap" => #12
    SubscribeSubject "Track ID"
    -> PropertyMapping(Value) => #14
    #12, #14 -> IntProperty(Value=1)
    -> TakeWhile "If Track 1 or 2"
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
