<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:StateMachine;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>L</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>LickDetector</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>O</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OtherDetector</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="StateMachineDefinition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\Schemas\state-machine.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:StateMachine" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StateDefinitions</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GenerateTransitionDictionary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Alias</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TransitionDictionary</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TransitionDictionary</Name>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty">
          <Value>gratings</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:State">
        <rx:Name>CurrentState</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:State">
        <rx:Name>BeginState</rx:Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>CurrentState</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SelectState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Logic</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>DoLogic</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Alias</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LogicAlias</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TransitionsTo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TransitionsTo</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StateDictionary</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LogicAlias</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>keypress</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TransitionsTo</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TransitionsTo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDictionary</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>State</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Visual.Alias</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>checkerboard</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionsTo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateComplete</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionsTo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TransitionDictionary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="Item1" />
              </PropertyMappings>
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>checkerboard</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BeginState</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Timer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Logic</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Transition</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchTransition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Timer" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DueTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>timer</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>KeyPress</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:CreateObservable">
              <Name>KeyPress</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Logic</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Transition</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchTransition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:KeyPress" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>KeyCode</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Filter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>Return</wie:Filter>
                      <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>keypress</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WaitForTrigger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:CreateObservable">
              <Name>WaitForTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Logic</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Transition</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchTransition">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:WaitForTrigger" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>AwaitTrigger</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TriggerName</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Name" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LickDetector</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>waitfortrigger</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Gratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Gratings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Visual</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Stimulus</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchStimulus">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Gratings" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Gratings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Gratings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TemporalFrequency</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TemporalFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>2</TemporalFrequency>
                    <Phase>0</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>gratings</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Checkerboard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Checkerboard</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Visual</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Stimulus</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchStimulus">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:CheckerBoard" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Checkerboard</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Checkerboard</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NRows</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="NumberColumns" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Checkerboard</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NColumns</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="NumberRows" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <NumberColumns>2</NumberColumns>
                    <NumberRows>2</NumberRows>
                    <Phase>0</Phase>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="13" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source3" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>checkerboard</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>5</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item2</rx:KeySelector>
        <rx:ElementSelector>Item1</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>StateDictionary</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="31" Label="Source1" />
      <Edge From="27" To="31" Label="Source2" />
      <Edge From="28" To="31" Label="Source3" />
      <Edge From="29" To="31" Label="Source4" />
      <Edge From="30" To="31" Label="Source5" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>