<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisplayEnvironment</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="BonVisionParameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadBonVisionParameters">
                <p1:Path>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\Schemas\BonVisionParameters.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BonVisionParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BonVisionParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DisplayDevice</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DisplayDevice" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BonVisionParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>WindowState</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="WindowState" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BonVisionParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BonVisionParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\FrameEventLoggerWithTime.bonsai">
              <Name>StimEvents</Name>
              <Append>false</Append>
              <Overwrite>false</Overwrite>
              <Suffix>Timestamp</Suffix>
              <FileName>C:\DATA\Subjects\M24046\Bonsai\20240815\M24046_E1_1_DirTuning</FileName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RenderFrameCount</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-90</Left>
              <Right>90</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisplaySettings</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <Width xsi:nil="true" />
                    <Height xsi:nil="true" />
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>0</RotationX>
                    <FaceSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>15</Width>
                    <Height>19.5</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>-15</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <GammaLut>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp</GammaLut>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0</X>
                    <Y>0</Y>
                    <Width>0.334</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateRenderState">
                      <gl:RenderState>
                        <gl:StateConfiguration xsi:type="gl:ViewportState">
                          <gl:X>0.333</gl:X>
                          <gl:Y>0</gl:Y>
                          <gl:Width>0.333</gl:Width>
                          <gl:Height>1</gl:Height>
                        </gl:StateConfiguration>
                      </gl:RenderState>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>15</Width>
                    <Height>19.5</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>-60.000001669652114</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>12</X>
                      <Y>0</Y>
                      <Z>-9</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <GammaLut>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp</GammaLut>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.333</X>
                    <Y>0</Y>
                    <Width>0.334</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateRenderState">
                      <gl:RenderState>
                        <gl:StateConfiguration xsi:type="gl:ViewportState">
                          <gl:X>0.665</gl:X>
                          <gl:Y>0</gl:Y>
                          <gl:Width>0.333</gl:Width>
                          <gl:Height>1</gl:Height>
                        </gl:StateConfiguration>
                      </gl:RenderState>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
                    <Width>15</Width>
                    <Height>19.5</Height>
                    <Rotation>
                      <X>0</X>
                      <Y>60.000001669652114</Y>
                      <Z>0</Z>
                    </Rotation>
                    <Translation>
                      <X>-12</X>
                      <Y>0</Y>
                      <Z>-9</Z>
                    </Translation>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <GammaLut>C:\Users\neurogears\source\repos\SaleemLab\VisualStimuli\New_HALFINTENSITY_LUT_SALEEM20_20241118.bmp</GammaLut>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
                    <X>0.667</X>
                    <Y>0</Y>
                    <Width>0.334</Width>
                    <Height>1</Height>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateRenderState">
                      <gl:RenderState>
                        <gl:StateConfiguration xsi:type="gl:ViewportState">
                          <gl:X>0</gl:X>
                          <gl:Y>0</gl:Y>
                          <gl:Width>0.333</gl:Width>
                          <gl:Height>1</gl:Height>
                        </gl:StateConfiguration>
                      </gl:RenderState>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PDSync</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DrawStimuli</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PDSync</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" />
                            <Property Name="ColorG" />
                            <Property Name="ColorB" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="ExtentX" DisplayName="Sync_Xsize" />
                          <Property Name="ExtentY" DisplayName="Sync_Ysize" />
                          <Property Name="LocationX" DisplayName="Sych_Xpos" />
                          <Property Name="LocationY" DisplayName="Synch_Ypos" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                          <ExtentX>15</ExtentX>
                          <ExtentY>10</ExtentY>
                          <LocationX>10</LocationX>
                          <LocationY>-30</LocationY>
                          <Layer>1</Layer>
                          <Angle>0</Angle>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>0</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source2" />
                        <Edge From="3" To="4" Label="Source3" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="16" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source4" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="26" To="30" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\DATA\TempStimData</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Saving Dir" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ASyncSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>22</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>22</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="InitialSyncState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDSync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Saving Dir" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\DATA\TempStimData</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SparseNoise_Log_.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DurationSingleImage</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialGray Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>TriggerPDSync</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PDSync</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>S</gli:Key>
          <gli:Modifiers>Shift</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PositionSizeFeatures</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GratingFeatures</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirTuningFeatures</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source3" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="NumDirs" Selector="Item3.NumDirs" />
          <Property Name="ONtime" Selector="Item3.ONTime" />
          <Property Name="OFFtime" Selector="Item3.OFFTime" />
          <Property Name="NumRepeats" Selector="Item3.NumRepeats" />
          <Property Name="LocationX" Selector="Item1.LocationX" />
          <Property Name="LocationY" Selector="Item1.LocationY" />
          <Property Name="ExtentX" Selector="Item1.ExtentX" />
          <Property Name="ExtentY" Selector="Item1.ExtentY" />
          <Property Name="SpatialFrequency" Selector="Item2.SpatialFrequency" />
          <Property Name="TemporalFrequency" Selector="Item2.TemporalFrequency" />
          <Property Name="SquareWave" Selector="Item2.SquareWave" />
          <Property Name="Contrast" Selector="Item2.Contrast" />
          <Property Name="Radius" Selector="Item1.Radius" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DirTuning</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>nDir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>lastAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" Selector="Item1" />
                <Property Name="RangeMax" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>8</Count>
              <RangeMin>0</RangeMin>
              <RangeMax>315</RangeMax>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ONtime" />
              <Property Name="OFFtime" />
              <Property Name="LocationX" />
              <Property Name="LocationY" />
              <Property Name="ExtentX" />
              <Property Name="ExtentY" />
              <Property Name="SpatialFrequency" />
              <Property Name="TemporalFrequency" />
              <Property Name="SquareWave" />
              <Property Name="Contrast" />
              <Property Name="Radius" />
              <Property Name="Aperture" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format>Angle, {0}
</Format>
                    <Selector>it</Selector>
                    <Name>StimEvents</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ONtime" />
                    <Property Name="OFFtime" />
                    <Property Name="LocationX" />
                    <Property Name="LocationY" />
                    <Property Name="ExtentX" />
                    <Property Name="ExtentY" />
                    <Property Name="SpatialFrequency" />
                    <Property Name="TemporalFrequency" />
                    <Property Name="SquareWave" />
                    <Property Name="Contrast" />
                    <Property Name="Radius" />
                    <Property Name="Aperture" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>DrawStimuli</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Angle" />
                          <Property Name="LocationX" />
                          <Property Name="LocationY" />
                          <Property Name="ExtentX" />
                          <Property Name="ExtentY" />
                          <Property Name="SpatialFrequency" />
                          <Property Name="TemporalFrequency" />
                          <Property Name="SquareWave" />
                          <Property Name="Contrast" />
                          <Property Name="Radius" />
                          <Property Name="Aperture" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <ExtentX>180</ExtentX>
                          <ExtentY>90</ExtentY>
                          <SpatialFrequency>0.031</SpatialFrequency>
                          <TemporalFrequency>3</TemporalFrequency>
                          <Phase>0</Phase>
                          <Angle>0</Angle>
                          <SquareWave>false</SquareWave>
                          <Contrast>1</Contrast>
                          <DutyCycle xsi:nil="true" />
                          <Radius>100</Radius>
                          <Aperture>0.1</Aperture>
                          <Opacity>1</Opacity>
                        </Expression>
                        <Expression xsi:type="rx:Sink">
                          <Name>TriggerPDSync</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>1</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>PDSync</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="ONtime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="OFFtime" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>DrawStimuli</Name>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                                <ExtentX>120</ExtentX>
                                <ExtentY>120</ExtentY>
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <Layer>0</Layer>
                                <Angle>0</Angle>
                                <ColorR>0.5</ColorR>
                                <ColorG>0.5</ColorG>
                                <ColorB>0.5</ColorB>
                                <ColorA>1</ColorA>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Zyx</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="DueTime" DisplayName="OFFtime" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT2S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:TakeUntil" />
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Name>TriggerPDSync</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Value" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>0</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>PDSync</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="5" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="NumRepeats" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NumDirs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nDir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nDir</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>360-360/it</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>lastAngle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Q</gli:Key>
          <gli:Modifiers>Shift</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FinalGrayScreen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>TriggerPDSync</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PDSync</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Q</gli:Key>
          <gli:Modifiers>Shift</gli:Modifiers>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>StimulusParams</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ExtentX" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>180</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ExtentY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LocationY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LocationX" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Radius" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Aperture" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (Item1 as ExtentX,
Item2 as ExtentY,
Item3 as LocationY,
Item4 as LocationX,
Item5 as Radius,
Item6 as Aperture)</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>PositionSizeFeatures</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>PositionSizeFeatures</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SquareWave" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Contrast" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SpatialFrequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.031</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TemporalFrequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (Item1 as SquareWave,
Item2 as Contrast,
Item3 as SpatialFrequency,
Item4 as TemporalFrequency)</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>GratingFeatures</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>GratingFeatures</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NumDirs" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="NumRepeats" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ONTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT1S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="OFFTime" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT2S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new (Item1 as NumDirs,
Item2 as NumRepeats,
Item3 as ONTime,
Item4 as OFFTime)</scr:Expression>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>DirTuningFeatures</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>DirTuningFeatures</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="24" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="24" Label="Source3" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source4" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="36" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="36" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="36" Label="Source3" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source4" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" />
        <Property Name="MouseID" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DirTuning</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\DATA\Subjects\M24046\Bonsai\20240815\M24046_E1_1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Arduino</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="17" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>