<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Duration" />
        <Property Name="Rotation" />
        <Property Name="TextureName" />
        <Property Name="ShowSyncQuad" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>DrawStimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT1S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Rotation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>360</dsp:Max>
                <dsp:RangeMin>-1</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ShiftX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TextureName" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>txtr1</TextureName>
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0.416666657</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ShowSyncQuad" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ShowSyncQuad</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>3</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.1</ExtentX>
              <ExtentY>0.1</ExtentY>
              <LocationX>1</LocationX>
              <LocationY>-1</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>LVP</port:Name>
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="screenOn" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>status_experiment</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>false</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>BrightnessMinRequest</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Brightness" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GenerateLvpSetBrightnessMessage">
                      <p1:DeviceNumber>5</p1:DeviceNumber>
                      <p1:ControlledDevice>0</p1:ControlledDevice>
                      <p1:Brightness>0</p1:Brightness>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWrite">
                      <port:PortName>LVP</port:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>true</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>BrightnessMaxRequest</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Brightness" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:GenerateLvpSetBrightnessMessage">
                      <p1:DeviceNumber>5</p1:DeviceNumber>
                      <p1:ControlledDevice>0</p1:ControlledDevice>
                      <p1:Brightness>32</p1:Brightness>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWrite">
                      <port:PortName>LVP</port:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="14" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source2" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="29" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="32" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>