<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:DataSchema;assembly=Extensions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>black</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\Black.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>white</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\white.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>red</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\red.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>green</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\green.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>blue</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\blue.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>white_noise2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\white_noise2.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>imageSize_64_checker</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\imageSize_64_checker.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>txtr1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\Textures\txtr1.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>txtr2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\Textures\txtr2.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>blank</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>..\Textures\blank.png</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>AllImCat</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\AllImCat.tif</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>AllImCat1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\AllImCat1.tif</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>AllImCat2</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\AllImCat2.tif</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>HD_disp_1</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\HD_disp_1.tif</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>HD_disp_12</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\AmanLab\Documents\src\troubleshooting_tom\VisualStimuli\Textures\HD_disp_12.tif</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="SessionSettings" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\Schemas\schema-sandbox_copy.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:SchemaSandbox" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SessionDefinition.LoopSequence</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>PresentationDefiniton</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionDefinition.RotationSteps</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PresentationDefiniton</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SessionDefinition.LoopSequence.Count</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SessionDefinition.RotationSteps.Count</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>36</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToList" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SessionDefinition.RotationSteps</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ShuffleArray" />
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>StimulusSpace</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimulusSpace</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Duration" Selector="Item2.SessionDefinition.BaselineStartSequence.Duration" />
          <Property Name="Rotation" Selector="Item1.Item2" />
          <Property Name="TextureName" Selector="Item2.SessionDefinition.BaselineStartSequence.Texture" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawStimulus.bonsai">
        <Duration>15</Duration>
        <Rotation>90</Rotation>
        <TextureName>white</TextureName>
        <ShowSyncQuad>false</ShowSyncQuad>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LoopSequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimulusSpace</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ShuffleArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DoLoopSequence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>PresentationDefinition</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="SessionDefinition.InitiationSequence.Duration" />
                      <Property Name="TextureName" Selector="SessionDefinition.InitiationSequence.Texture" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawStimulus.bonsai">
                    <Duration>1</Duration>
                    <Rotation>0</Rotation>
                    <TextureName>black</TextureName>
                    <ShowSyncQuad>false</ShowSyncQuad>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PresentationDefinition</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentPresentation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="Item2.Item2.Duration" />
                      <Property Name="Rotation" Selector="Item2.Item1" />
                      <Property Name="TextureName" Selector="Item2.Item2.Texture" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawStimulus.bonsai">
                    <Duration>1</Duration>
                    <Rotation>300</Rotation>
                    <TextureName>red</TextureName>
                    <ShowSyncQuad>true</ShowSyncQuad>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SessionDefinition.BaselineEndSequence.Duration</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSpace</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Rotation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SessionDefinition.BaselineEndSequence.Texture</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TextureName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawStimulus.bonsai">
                    <Duration>5</Duration>
                    <Rotation>90</Rotation>
                    <TextureName>black</TextureName>
                    <ShowSyncQuad>false</ShowSyncQuad>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2.ShouldRotate</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="port:CreateSerialPort">
                            <port:Name>LVP</port:Name>
                            <port:PortName>COM3</port:PortName>
                            <port:BaudRate>9600</port:BaudRate>
                            <port:NewLine>\r\n</port:NewLine>
                            <port:Parity>None</port:Parity>
                            <port:ParityReplace>63</port:ParityReplace>
                            <port:DataBits>8</port:DataBits>
                            <port:StopBits>One</port:StopBits>
                            <port:Handshake>None</port:Handshake>
                            <port:DiscardNull>false</port:DiscardNull>
                            <port:DtrEnable>false</port:DtrEnable>
                            <port:RtsEnable>false</port:RtsEnable>
                            <port:ReadBufferSize>4096</port:ReadBufferSize>
                            <port:WriteBufferSize>2048</port:WriteBufferSize>
                            <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>False</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>BrightnessMinRequest</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Brightness" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:GenerateLvpSetBrightnessMessage">
                                  <p2:DeviceNumber>5</p2:DeviceNumber>
                                  <p2:ControlledDevice>0</p2:ControlledDevice>
                                  <p2:Brightness>0</p2:Brightness>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="port:SerialWrite">
                                  <port:PortName>LVP</port:PortName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>True</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>BrightnessMaxRequest</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Brightness" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:GenerateLvpSetBrightnessMessage">
                                  <p2:DeviceNumber>5</p2:DeviceNumber>
                                  <p2:ControlledDevice>0</p2:ControlledDevice>
                                  <p2:Brightness>32</p2:Brightness>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="port:SerialWrite">
                                  <port:PortName>LVP</port:PortName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Concat" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="5" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="22" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="20" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="20" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="20" Label="Source3" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source4" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionDefinition.Repeats</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Double,p1:PresentationDefinition)">
        <rx:Name>CurrentPresentation</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>test-log-presentation.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="23" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="29" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>